PsychoPy2experiment version="2020.1.2"
Settings
  Audio lib = sounddevice
  Completed URL = https://app.prolific.co/submissions/complete?cc=30F4EAC3 
  Data filename = u'Data/%s_%s_%s' % (expName, expInfo['date'], expInfo['participant'])
  Enable Escape = False
  Experiment info = {}
  Full-screen window = False
  Incomplete URL = https://app.prolific.co/submissions/complete?cc=30F4EAC3
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = norm
  Use version = latest
  Window size (pixels) = [1200, 900]
  color = $[-1,-1,-1]
  expName = TranslationElicitation_spa
  logging level = error
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Routines
  Routine trial
    TextComponent taskText
      letterHeight = 0.2
      saveStartStop = False
      startVal [condition] = trialSound.status == FINISHED
      text [set every frame] = '> ' + $inputText
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    SoundComponent trialSound
      sound [set every repeat] = $soundfile
      startVal [time (s)] = 0.0
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    CodeComponent trialCode
      Code Type = Both
      Begin Experiment:
        inputText = '';
      Begin JS Experiment:
        inputText = "";
      Begin JS Routine:
        keysAllowed = ["q", "w", "e", "r", "t", "y", "u", "i", "o", "p", "a", "s", "d", "f", "g", "h", "j", "k", "l", "semicolon", "apostrophe", "z", "x", "c", "v", "b", "n", "m", "escape", "space", "return", "backspace"];
        inputText = "";
        isAccented = false;
        error = false;
        trialClock.reset()
        keyPressTime = 0;
      Begin Routine:
        keysAllowed = ['q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'semicolon', 'apostrophe', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'escape', 'space', 'return', 'backspace']
        inputText = ''
        debugText = ''
        isAccented = False
        error = False
        keyPressTime = 0
      Each Frame:
        keys = event.getKeys(keyList = keysAllowed)

        i = 0

        if trialSound.status==FINISHED: # if audio has finished...

            if len(keys): # if a key has been pressed...

                if 'return' in keys[i]: # and it's 'return'
                    thisExp.addData('trialOffset', t) # save time
                    thisExp.addData('keyPressTime', t) # save time
                    continueRoutine = False

                elif 'escape' in keys[i]: # and it's 'escape'...
                    thisExp.addData('trialOffset', t) # save time
                    core.quit()  # exit

                elif keys[i]=='space': # and it's 'space'...
                    inputText = inputText + ' ' # add a space

                elif keys[i] == 'backspace': # and it's 'backspace'
                    inputText = inputText[:-1] # remove last character
                    keyPressTime = t # get time
                    error = True
                elif 'minus' in keys[i]: #
                    inputText += "'" #add apostrophe

                elif 'apostrophe' in keys[i]: # and it's apostrophe
                    isAccented = True # flag 'accent' for subsequent keys

                elif 'semicolon' in  keys[i]: # if 'semicolon' is pressed
                    inputText += '\u00d1' # write 'ñ'

                else:
                    if isAccented: # and accent is flagged
                        if 'a' in keys[i]: # and 'a' is pressed
                            inputText += '\u00c1' # write "á"
                            isAccented = False # remove accent flag for subsequent keys
                        elif 'e' in keys[i]: # and 'e' is pressed
                            inputText += '\u00c9'# write "é"
                            isAccented = False # remove accent flag for subsequent keys
                        elif 'i' in keys[i]: # and 'i' is pressed
                            inputText += '\u00cd' # write "í"
                            isAccented = False # remove accent flag for subsequent keys
                        elif 'o' in keys[i]: # and 'ó' is pressed
                            inputText += '\u00d3' # write "ó"
                            isAccented = False # remove accent flag for subsequent keys
                        elif 'u' in keys[i]: # and 'u' is pressed
                            inputText += '\u00da' # write "ú"
                            isAccented = False # remove accent flag for subsequent keys
                    else:
                        inputText += keys[i].upper()

            # save data
                thisExp.addData('keyPressed', keys[i]) # save pressed key
                thisExp.addData('keyPressTime', t) # save time
                thisExp.addData('inputText', inputText) # save text
                thisExp.addData('error', error) # save time
                thisExp.nextEntry()
                i = i+1
      Each JS Frame:
        taskText.setText(("> " + inputText));

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);

        keys = psychoJS.eventManager.getKeys({"keyList": keysAllowed});
        i = 0;
        if ((trialSound.status === PsychoJS.Status.FINISHED)) {
            if (keys.length) {
                keyPressTime = trialClock.getTime();
                if (_pj.in_es6("return", keys[i])) {
                    inputText = "";
                    psychoJS.experiment.addData("trialOffset", t);
                    psychoJS.experiment.addData("keyPressTime", t);
                    continueRoutine = false;
                } else {
                    if (_pj.in_es6("escape", keys[i])) {
                        psychoJS.experiment.addData("trialOffset", t);
                        psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
                    } else {
                        if ((keys[i] === "space")) {
                            inputText = (inputText + " ");
                        } else {
                            if ((keys[i] === "backspace")) {
                                inputText = inputText.slice(0, (- 1));
                                error = true;
                            } else {
                                if (_pj.in_es6("minus", keys[i])) {
                                    inputText += "'";
                                } else {
                                    if (_pj.in_es6("apostrophe", keys[i])) {
                                        isAccented = true;
                                    } else {
                                        if (_pj.in_es6("semicolon", keys[i])) {
                                            inputText += "\u00d1";
                                        } else {
                                            if (isAccented) {
                                                if (_pj.in_es6("a", keys[i])) {
                                                    inputText += "\u00c1";
                                                    isAccented = false;
                                                } else {
                                                    if (_pj.in_es6("e", keys[i])) {
                                                        inputText += "\u00c9";
                                                        isAccented = false;
                                                    } else {
                                                        if (_pj.in_es6("i", keys[i])) {
                                                            inputText += "\u00cd";
                                                            isAccented = false;
                                                        } else {
                                                            if (_pj.in_es6("o", keys[i])) {
                                                                inputText += "\u00d3";
                                                                isAccented = false;
                                                            } else {
                                                                if (_pj.in_es6("u", keys[i])) {
                                                                    inputText += "\u00da";
                                                                    isAccented = false;
                                                                }
                                                            }
                                                        }
                                                    }
                                                }
                                            } else {
                                                inputText += keys[i].toUpperCase();
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
                psychoJS.experiment.addData("keyPressed", keys[i]);
                psychoJS.experiment.addData("keyPressTime", keyPressTime);
                psychoJS.experiment.addData("inputText", inputText);
                psychoJS.experiment.addData("error", error);
                psychoJS.experiment.nextEntry();
                i = (i + 1);
            }
        }
  Routine setup
    TextComponent setupTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PREPARACIÓN
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    TextComponent setupText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si es posible, utiliza Chrome o Mozilla.

        Utiliza un ordenador (no una tablet o un teléfono móvil)

        Utiliza auriculares

        Cierra todas las pestañas de tu navegador, excepto esta

        No cambies de pestaña en el navegador

        Si, por alguna razón, reinicias el estudio (por ejemplo, al haber actualizado la página o por un corte de internet), háznoslo saber escribiendo a gonzalo.garciadecastro@upf.edu.
    TextComponent setupTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent setupCode
      Code Type = Both
      Begin JS Routine:
        // align text to the left
        setupText.setAlignHoriz("left");
        welcomeText.setAlignHoriz("left");
        descriptionText.setAlignHoriz("left");
        voluntaryText.setAlignHoriz("left");
        contactText.setAlignHoriz("left");
        confidentialityText.setAlignHoriz("left");
        informationText.setAlignHoriz("left");
        consentText.setAlignHoriz("left");
        languageL1Text.setAlignHoriz("left");
        //languageL2Text.setAlignHoriz("left");
        //languageL2OralText.setAlignHoriz("left");
        //languageL2WrittenText.setAlignHoriz("left");
        //languageL3Text.setAlignHoriz("left");
        //languageL3OralText.setAlignHoriz("left");
        //languageL3WrittenText.setAlignHoriz("left");
        languageCatalanOralText.setAlignHoriz("left");
        languageCatalanWrittenText.setAlignHoriz("left");
        demoAgeText.setAlignHoriz("left");
        demoSexText.setAlignHoriz("left");
        demoEducationText.setAlignHoriz("left");
        demoCityText.setAlignHoriz("left");
        demoVisionText.setAlignHoriz("left");
        demoLanguageText.setAlignHoriz("left");
        setupLocationText.setAlignHoriz("left");
        setupNoiseText.setAlignHoriz("left");
        instructionsText.setAlignHoriz("left");
        instructions2Text.setAlignHoriz("left");
        beginText.setAlignHoriz("left");
        farewellText.setAlignHoriz("left");
      Begin Routine:
        # align text to the left
        setupText.alignText = "left"
        welcomeText.alignText = "left"
        descriptionText.alignText = "left"
        voluntaryText.alignText = "left"
        contactText.alignText = "left"
        confidentialityText.alignText = "left"
        informationText.alignText = "left"
        consentText.alignText = "left"
        languageL1Text.alignText = "left"
        #languageL2Text.alignText = "left"
        #languageL2OralText.alignText = "left"
        #languageL2WrittenText.alignText = "left"
        #languageL3Text.alignText = "left"
        #languageL3OralText.alignText = "left"
        #languageL3WrittenText.alignText = "left"
        languageCatalanOralText.alignText = "left"
        languageCatalanWrittenText.alignText = "left"
        demoAgeText.alignText = "left"
        demoSexText.alignText = "left"
        demoEducationText.alignText = "left"
        demoCityText.alignText = "left"
        demoVisionText.alignText = "left"
        demoLanguageText.alignText = "left"
        setupLocationText.alignText = "left"
        setupNoiseText.alignText = "left"
        instructionsText.alignText = "left"
        instructions2Text.alignText = "left"
        beginText.alignText = "left"
        farewellText.alignText = "left"
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit("Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!");
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine welcome
    TextComponent welcomeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BIENVENIDO/A
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    TextComponent welcomeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Este es un estudio diseñado por investigadores/as de la Universitat Pompeu Fabra (Barcelona, España) y la Universidad de Oxford (Oxford, Reino Unido). Su objetivo es investigar cómo bebés y adultos procesan palabras en una lengua desconocida. Los audios que escucharás durante el estudio están dirigidos a bebés.

        Se te ha invitado/a a participar, dado que tienes entre 18 y 25 años y eres hablante de castellano sin conocimientos de catalán.
    TextComponent welcomeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent welcomeCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine description
    TextComponent descriptionTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DESCRIPCIÓN
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    TextComponent descriptionText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Primero te pediremos que completes un BREVE CUESTIONARIO sobre tu perfil lingüístico, nivel educativo, etc.

        En el ESTUDIO escucharás un serie de palabras en catalán. Tu tarea consistirá en ADIVINAR la TRADUCCIÓN de cada palabra en CASTELLANO y ESCRIBIR tu respuesta utilizando el teclado.

        El estudio durará 30 minutos aproximadamente.
    TextComponent descriptionTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent descriptionCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine voluntary
    TextComponent voluntaryTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿ES OBLIGATORIO QUE PARTICIPE?
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    TextComponent voluntaryText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tu participación en este estudio es COMPLETAMENTE voluntaria. Podrás abandonar el estudio en cualquier momento pulsando la tecla ESC. Sin embargo, únicamente recibirás la compensación por tu participación si lo completas.
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    TextComponent voluntaryTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent voluntaryCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine contact
    TextComponent contactTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONTACTO
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    TextComponent contactText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si tienes cualquier pregunta sobre este estudio, por favor contacta con el equipo de investigación:
        Email: gonzalo.garciadecastro@upf.edu

        Investigadores/as Principales: Núria Sebastian-Galles y Kim Plunkett
        Investigadores: Gonzalo García-Castro y Serene Siow

        Center for Brain and Cognition, Universitat Pompeu Fabra
        Department of Experimental Psychology, University of Oxford
    TextComponent contactTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent contactCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine information
    TextComponent informationTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿NECESITAS MÁS INFORMACIÓN?
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    TextComponent informationText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si tienes alguna duda sobre algún aspecto de este estudio, por favor ponte en contacto  con Gonzalo García-Castro (gonzalo.garciadecastro@upf.edu), y haremos lo posible para responder tus preguntas. En caso de que desees hacer una queja formal, por favor, contacta con el/la responsable del University of Oxford Central University Research Ethics Committee, quien tratará de resolver el problema cuanto antes.

        Medical Sciences Interdivisional Research Ethics Committee;
        Email: ethics@medsci.ox.ac.uk
    TextComponent informationTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent informationCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine consent
    TextComponent consentTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONSENTIMIENTO INFORMADO
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    TextComponent consentText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = AL PRESIONAR LA TECLA DEL ESPACIO, doy mi consentimiento para participar en este estudio. He tomado esta decisión basándome en la información que he leído en el consentimiento informado. He tenido la oportunidad de recibir información adicional sobre el estudio, y comprendo que podré pedir más información en el futuro. Comprendo que puedo retirar este consentimiento en cualquier momento.
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    TextComponent consentTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    KeyboardComponent consentKey
      allowedKeys = 'space', 'escape'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent consentCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine instructions
    TextComponent instructionsTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCCIONES
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    TextComponent instructionsText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuación escucharás palabras a través de tus auriculares.

        Las palabras estarán en catalán y han sido grabadas como si estuvieran dirigidas a bebés. Tendrás que ADIVINAR la traducción de cada palabra al CASTELLANO.

        Empieza a escribir tan pronto como tengas una respuesta. Es posible que no la sepas. Escribe lo que creas que es más probable. DEBES escribir una respuesta PARA CADA PALABRA.

        CORRIGE errores utilizando la tecla de BORRAR como lo harías normalmente.

        Tras escribir la traducción, presiona ENTER para continuar con la siguiente palabra.
    TextComponent instructionsTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar.
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    KeyboardComponent instructionsKeys
      allowedKeys = 'space', 'escape'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent instructionsCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
  Routine instructions2
    TextComponent instructions2TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCCIONES
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    TextComponent instructions2Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ajusta el volumen para que las palabras se oigan de forma clara durante estos ensayos de práctica, para evitar tener que hacerlo durante el experimento.
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    TextComponent instructions2TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona ESPACIO para comenzar los 5 ensayos de PRACTICA >
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    CodeComponent instructions2Code
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          core.quit();
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine begin
    TextComponent beginText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Has finalizado los ensayos de PRÁCTICA.
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    TextComponent beginNext
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona ESPACIO para COMENZAR >
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    CodeComponent beginCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine farewell
    TextComponent farewellText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Enhorabuena!

        Has terminado.

        MUCHAS GRACIAS POR TU PARTICIPACIÓN.

        Si tienes dudas, ponte en contacto con nosotros: gonzalo.garciadecastro@upf.edu

        A continuación, te redirigiremos a la web de Prolific.

        Por favor, espera a ser redigirido/a a Prolific. De lo contrario, no podrás recoger tu compensación.
    TextComponent farewellTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para salir >
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    CodeComponent farewellCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space', 'return'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space", "return"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine confidentiality
    TextComponent confidentialityTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONFIDENCIALIDAD
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    TextComponent confidentialityText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Tu respuestas serán completamente ANÓNIMAS, y tomaremos las medidas necesarias para que se mantengan como tal.

        SE GUARDARÁN tus datos en un archivo protegido por contraseña y SE PODRÁN UTILIZAR DE MANERA COMPLETAMENTE ANONIMIZADA en publicaciones académicas. NO REGISTRAREMOS tu dirección de IP. Los datos resultantes de este estudio se archivarán durante un mínimo de tres años tras ser publicados.

        Nos gustaría tener tu permiso para utilizar tus datos anonimizados para estudios futuros y para COMPARTIRLOS con otros equipos de investigación (ej., a través de bases de datos online). SE ELIMINARÁ cualquier información personal que pudiera identificarte O SE REEMPLAZARÁ antes de que los archivos SE COMPARTAN O SE PUBLIQUEN.

        Este proyecto HA SIDO APROBADO POR  el University of Oxford Central University Research Ethics Committee, R60939/RE007.
    TextComponent confidentialityTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa ESPACIO para continuar >
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    CodeComponent confidentialityCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
          psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine fixation
    TextComponent fixationText
      color = yellow
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine questionnaire
    TextComponent questionnaireTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO
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    TextComponent questionnaireText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemText
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    TextComponent questionnaireTextResponse
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $inputText
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    TextComponent questionnaireTextDebug
      color = blue
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $debugText
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    CodeComponent questionnaireCode
      Code Type = Auto->JS
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      Begin Routine:
        # if language2 or language3 were left blank, skip questions related to them
        typeItems = ["language2", "language3", "demographicsAge", "demographicsCity"];
        # initialise variables
        psychopy.event.clearEvents()
        keys = ''
        inputText = ''
        isAccented = False
        debugText = ''

        if (itemLabel in ['language2Oral', 'language2Written', 'language3Oral', 'language3Written']):
            if (language2 in ''):
                continueRoutine = False
            elif (itemLabel in ['language3Oral', 'language3Written']):
                if (language3 in ''):
                    continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        i = 0 # index whether how many keys have been previously pressed
        print('NO KEY PRESSED')

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...
            print('KEY PRESSED')
            debugText += keys[i]

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                print('ESCAPE')
                core.quit()

            # and item is 2 or 3...
            if itemLabel in typeItems:
                print('itemLabel is in typeItems')
                # ... and RETURN is pressed, stop trial
                if (keys[i]=='return'):
                    print('RETURN')
                    if (itemLabel=='language2'):
                        language2 = inputText
                        if language2=='':
                            language3=='':
                        thisExp.addData('questionnaireResponse', inputText) # save data
                        continueRoutine = False
                    elif (itemLabel=='language3'):
                        language3 = inputText
                        thisExp.addData('questionnaireResponse', inputText) # save data
                        continueRoutine = False
                    elif (itemLabel=='demographicsAge' or itemLabel=='demographicsCity'):
                        if (inputText != ''):
                            thisExp.addData('questionnaireResponse', inputText) # save data
                            continueRoutine = False

                    # ... and BACKSPACE is pressed, delete last character
                    else:
                        print('itemLabel NOT in typeItems')

                        if keys[i]=='backspace':
                            inputText = inputText[:-1]
                            # and 'minus' is pressed, add apostrophe
                        elif keys[i]=='minus':
                            inputText += "'"
                        elif keys[i]=='semicolon': # if 'semicolon' is pressed, write 'ñ'
                            inputText += '\u00d1'
                        # and 'apostrophe' is pressed, flag accent
                        elif keys[i]=='apostrophe':
                            isAccented = True
                            # ... and any other allowed key is pressed, print it
                        elif (isAccented): # if accent is flagged
                            if keys[i]=='a': # and 'a' is pressed
                                inputText += '\u00c1' # write "Á"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='e': # and 'e' is pressed
                                inputText += '\u00c9'# write "É"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='i': # and 'i' is pressed
                                inputText += '\u00cd' # write "Í"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='o': # and 'o' is pressed
                                inputText += '\u00d3' # write "Ó"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='u': # and 'u' is pressed
                                inputText += '\u00da' # write "Ú"
                                isAccented = False # remove accent flag for subsequent keys

                            # write key as it is (in capital letters)
                            inputText += keys[i].upper();
                            thisExp.addData('questionnaireResponse', inputText) # save data
                            i = i + 1 # index another key press
            else:
                thisExp.addData('questionnaireResponse', keys[i]) # save data
                continueRoutine = False
  Routine languageL1
    TextComponent languageL1TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL1Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuál es tu lengua NATIVA?

        e) Español/Castellano
        c) Catalán
        i) Inglés
        o) Otra

        Por favor, presiona la letra correspondiente.
    TextComponent languageL1TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona la letra correspondiente.
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    KeyboardComponent languageL1Key
      allowedKeys = 'e', 'c', 'i', 'o', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL1Code
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageL2
    TextComponent languageL2TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL2Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Conoces una SEGUNDA LENGUA, distinta de la que has indicado anteriormente? Si es así, escribe cuál y presiona ENTER. Si no, presiona ENTER sin escribir nada.
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    TextComponent languageL2TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona ENTER para continuar.
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    TextComponent languageL2TextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent languageL2Code
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        inputText = "";
        isAccented = false;
      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys()
        i = 0 # index whether how many keys have been previously pressed

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('languageL2', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            if (keys[i]=='return'):
                language2value = inputText
                thisExp.addData('languageL2', inputText) # save data
                continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            # and 'minus' is pressed, add apostrophe
            elif (keys[i]=='minus'):
                inputText += "'"
            elif (keys[i]=='semicolon'): # if 'semicolon' is pressed, write 'ñ'
                inputText += '\u00d1'
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                isAccented = True
            # ... and any other allowed key is pressed, print it
            elif (isAccented): # if accent is flagged
                if keys[i]=='a': # and 'a' is pressed
                    inputText += '\u00c1' # write "Á"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='e'): # and 'e' is pressed
                    inputText += '\u00c9'# write "É"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='i'): # and 'i' is pressed
                    inputText += '\u00cd' # write "Í"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='o'): # and 'o' is pressed
                    inputText += '\u00d3' # write "Ó"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='u'): # and 'u' is pressed
                    inputText += '\u00da' # write "Ú"
                    isAccented = False # remove accent flag for subsequent keys
                else:
                    isAccented = False

                thisExp.addData('languageL2', inputText) # save data
                i = i + 1 # index another key press

            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('languageL2', inputText) # save data
                i = i + 1 # index another key press
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys();
        i = 0;
        if (keys.length) {
            if ((keys[i] === "escape")) {
                psychoJS.experiment.addData("languageL2", inputText);
                psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
            }
            if ((keys[i] === "return")) {
                languageL2value = inputText;
                if ((languageL2value == "")) {
                    languageL3value="";
                    }
                psychoJS.experiment.addData("languageL2", inputText);
                continueRoutine = false;
            } else {
                if ((keys[i] === "backspace")) {
                    inputText = inputText.slice(0, (- 1));
                } else {
                    if ((keys[i] === "minus")) {
                        inputText += "'";
                    } else {
                        if ((keys[i] === "semicolon")) {
                            inputText += "\u00d1";
                        } else {
                            if ((keys[i] === "apostrophe")) {
                                isAccented = true;
                            } else {
                                if (isAccented) {
                                    if ((keys[i] === "a")) {
                                        inputText += "\u00c1";
                                        isAccented = false;
                                    } else {
                                        if ((keys[i] === "e")) {
                                            inputText += "\u00c9";
                                            isAccented = false;
                                        } else {
                                            if ((keys[i] === "i")) {
                                                inputText += "\u00cd";
                                                isAccented = false;
                                            } else {
                                                if ((keys[i] === "o")) {
                                                    inputText += "\u00d3";
                                                    isAccented = false;
                                                } else {
                                                    if ((keys[i] === "u")) {
                                                        inputText += "\u00da";
                                                        isAccented = false;
                                                    } else {
                                                        isAccented = false;
                                                    }
                                                }
                                            }
                                        }
                                    }
                                    psychoJS.experiment.addData("languageL2", inputText);
                                    i = (i + 1);
                                } else {
                                    inputText += keys[i].toUpperCase();
                                    psychoJS.experiment.addData("languageL2", inputText);
                                    i = (i + 1);
                                }
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        console.log(languageL2value);
      End Routine:
        print(languageL2value)
  Routine languageL3
    TextComponent languageL3TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL3Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿Conoces una TERCERA LENGUA, distinta de la que has indicado anteriormente? Si es así, escribe cuál y presiona ENTER. Si no, presiona ENTER sin escribir nada.
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    TextComponent languageL3TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona ENTER para continuar.
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    TextComponent languageL3TextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent languageL3Code
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        inputText = "";
        isAccented = false;
      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        if languageL2=='':
            continueRoutine = False


        keys = event.getKeys()
        i = 0 # index whether how many keys have been previously pressed

        # keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('languageL2', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                language2 = inputText
                thisExp.addData('languageL2', inputText) # save data
                continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            # and 'minus' is pressed, add apostrophe
            elif (keys[i]=='minus'):
                inputText += "'"
            elif (keys[i]=='semicolon'): # if 'semicolon' is pressed, write 'ñ'
                inputText += '\u00d1'
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                isAccented = True
            # ... and any other allowed key is pressed, print it
            elif (isAccented): # if accent is flagged
                if keys[i]=='a': # and 'a' is pressed
                    inputText += '\u00c1' # write "Á"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='e'): # and 'e' is pressed
                    inputText += '\u00c9'# write "É"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='i'): # and 'i' is pressed
                    inputText += '\u00cd' # write "Í"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='o'): # and 'o' is pressed
                    inputText += '\u00d3' # write "Ó"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='u'): # and 'u' is pressed
                    inputText += '\u00da' # write "Ú"
                    isAccented = False # remove accent flag for subsequent keys
                else:
                    isAccented = False

                thisExp.addData('languageL2', inputText) # save data
                i = i + 1 # index another key press

            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('languageL2', inputText) # save data
                i = i + 1 # index another key press
      Each JS Frame:
        if ((languageL2value === "")) {
            continueRoutine = false;
        }

        keys = psychoJS.eventManager.getKeys();
        i = 0;
        if (keys.length) {
            if ((keys[i] === "escape")) {
                psychoJS.experiment.addData("languageL2", inputText);
                psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
            } else {
                if ((keys[i] === "return")) {
                    languageL3value = inputText;
                    psychoJS.experiment.addData("languageL2", inputText);
                    continueRoutine = false;
                } else {
                    if ((keys[i] === "backspace")) {
                        inputText = inputText.slice(0, (- 1));
                    } else {
                        if ((keys[i] === "minus")) {
                            inputText += "'";
                        } else {
                            if ((keys[i] === "semicolon")) {
                                inputText += "\u00d1";
                            } else {
                                if ((keys[i] === "apostrophe")) {
                                    isAccented = true;
                                } else {
                                    if (isAccented) {
                                        if ((keys[i] === "a")) {
                                            inputText += "\u00c1";
                                            isAccented = false;
                                        } else {
                                            if ((keys[i] === "e")) {
                                                inputText += "\u00c9";
                                                isAccented = false;
                                            } else {
                                                if ((keys[i] === "i")) {
                                                    inputText += "\u00cd";
                                                    isAccented = false;
                                                } else {
                                                    if ((keys[i] === "o")) {
                                                        inputText += "\u00d3";
                                                        isAccented = false;
                                                    } else {
                                                        if ((keys[i] === "u")) {
                                                            inputText += "\u00da";
                                                            isAccented = false;
                                                        } else {
                                                            isAccented = false;
                                                        }
                                                    }
                                                }
                                            }
                                        }
                                        psychoJS.experiment.addData("languageL2", inputText);
                                        i = (i + 1);
                                    } else {
                                        inputText += keys[i].toUpperCase();
                                        psychoJS.experiment.addData("languageL2", inputText);
                                        i = (i + 1);
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        console.log(languageL3value);
      End Routine:
        print(languageL3)
  Routine languageL2Oral
    TextComponent languageL2OralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL2OralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En una escala de 1-5, ¿cómo puntuarías tu capacidad de COMPRENSIÓN ORAL de tu SEGUNDA LENGUA?

        1) No entiendo prácticamente nada
        2) Entiendo algunas palabras
        3) Entiendo de qué va la conversación/algunas frases
        4) Entiendo casi todo
        5) Como un/a nativo/a o soy nativo/a
    TextComponent languageL2OralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent languageL2OralKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL2OralCode
      Code Type = Auto->JS
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      Each Frame:
        if languageL2=='':
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageL2Written
    TextComponent languageL2WrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL2WrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En una escala de 1-5, ¿cómo puntuarías tu ORTOGRAFÍA en tu SEGUNDA LENGUA?

        1) No he recibido educación en la ortografía de esta lengua
        2) Cometo muchas faltas de ortografía
        3) Cometo bastantes faltas de ortografía
        4) Cometo algunas faltas de ortografía
        5) No cometo ninguna falta de ortografía
    TextComponent languageL2WrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent languageL2WrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL2WrittenCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if languageL2=='':
            continueRoutine = False

        if ('escape' in keys):
            core.quit()
  Routine languageL3Oral
    TextComponent languageL3OralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL3OralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En una escala de 1-5, ¿cómo puntuarías tu capacidad de COMPRENSIÓN ORAL de tu TERCERA LENGUA?

        1) No entiendo prácticamente nada
        2) Entiendo algunas palabras
        3) Entiendo de qué va la conversación/algunas frases
        4) Entiendo casi todo
        5) Como un/a nativo/a o soy nativo/a
    TextComponent languageL3OralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Por favor, presiona el número correspondiente.
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    KeyboardComponent languageL3OralKey
      allowedKeys = '1', '2', '3','4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL3OralCode
      Code Type = Auto->JS
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      Each Frame:
        if languageL3=='' or languageL2=='':
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageCatalanOral
    TextComponent languageCatalanOralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageCatalanOralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En una escala de 1-5, ¿cómo puntuarías tu capacidad de COMPRENSIÓN ORAL en CATALÁN?

        1) No entiendo prácticamente nada
        2) Entiendo algunas palabras
        3) Entiendo de qué va la conversación/algunas frases
        4) Entiendo casi todo
        5) Como un/a nativo/a o soy nativo/a
    TextComponent languageCatalanOralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent languageCatalanOralKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanOralCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        }
  Routine languageL3Written
    TextComponent languageL3WrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageL3WrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En una escala de 1-5, ¿cómo puntuarías tu ORTOGRAFÍA en tu TERCERA LENGUA?

        1) No he recibido educación en la ortografía de esta lengua
        2) Cometo muchas faltas de ortografía
        3) Cometo bastantes faltas de ortografía
        4) Cometo algunas faltas de ortografía
        5) No cometo ninguna falta de ortografía
    TextComponent languageL3WrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Por favor, presiona el número correspondiente.
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    KeyboardComponent languageL3WrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL3WrittenCode
      Code Type = Both
      Each Frame:
        if languageL3=='':
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        if ((languageL2value === "" || languageL3value=== "")) {
            continueRoutine = false;
        }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        }
  Routine languageCatalanWritten
    TextComponent languageCatalanWrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageCatalanWrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        En una escala de 1-5, ¿cómo puntuarías tu ORTOGRAFÍA en CATALÁN?

        1) No he recibido educación en la ortografía de esta lengua
        2) Cometo muchas faltas de ortografía
        3) Cometo bastantes faltas de ortografía
        4) Cometo algunas faltas de ortografía
        5) No cometo ninguna falta de ortografía
    TextComponent languageCatalanWrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent languageCatalanWrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanWrittenCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        }
  Routine languageCatalanTime
    TextComponent languageCatalanTimeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO DE LENGUAS
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    TextComponent languageCatalanTimeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuánto tiempo has pasado en REGIONES donde se habla CATALÁN (Cataluña, Comunidad Valenciana, Islas Baleares), incluyendo tu infancia? Escoge la opción que mejor describe tu situación:

        1) Nunca o menos de 1 mes
        2) Entre 1 y 3 meses
        3) Solía pasar las vacaciones allí
        4) He vivido allí por menos de 6 meses
        5) He vivido allí por 6 o más meses
    TextComponent languageCatalanTimeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent languageCatalanTimeKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanTimeCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine demoAge
    TextComponent demoAgeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent demoAgeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Por favor, escribe tu edad (en años) y después presiona ENTER:
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    TextComponent demoAgeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona ENTER para continuar.
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    TextComponent demoAgeTextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent demoAgeCode
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        inputText = "";
        isAccented = false;
      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keylist:['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'escape', 'backspace', 'return'])
        i = 0 # index whether how many keys have been previously pressed

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                age = inputText
                thisExp.addData('age', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                if (inputText != ''):
                    language2 = inputText
                    thisExp.addData('age', inputText) # save data
                    continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('age', inputText) # save data
                i = i + 1 # index another key press
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({keyList:['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'escape', 'return', 'backspace']});
        i = 0;
        if (keys.length) {
            if ((keys[i] === "escape")) {
                psychoJS.experiment.addData("age", inputText);
                psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
            } else if ((keys[i] === "return" && inputText !== "")) {
                psychoJS.experiment.addData("age", inputText);
                continueRoutine = false;
            } else if ((keys[i] === "return" && inputText==="")) {
                inputText = "";
            } else if ((keys[i] === "backspace")) {
                inputText = inputText.slice(0, (- 1));
            } else {
                inputText += keys[i].toUpperCase();
                psychoJS.experiment.addData("age", inputText);
                i = (i + 1);
                }
            }
      End Routine:
        print(age)
  Routine demoSex
    TextComponent demoSexTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent demoSexText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sexo:

        m) Mujer
        h) Hombre
        o) Otro

        Por favor, presiona la letra correspondiente.
    TextComponent demoSexTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona la letra correspondiente.
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    KeyboardComponent demoSexKey
      allowedKeys = 'm', 'h', 'o', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoSexCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine demoEducation
    TextComponent demoEducationTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent demoEducationText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Cuál es el NIVEL EDUCATIVO más alto que has completado?

        1) Graduado escolar
        2) Educación Secundaria Obligatoria (ESO) o equivalente
        3) Bachillerato o equivalente
        4) Universidad o equivalente
        5) Formación Profesional (FP)
    TextComponent demoEducationTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent demoEducationKey
      allowedKeys = '1', '2', '3','4', '5', '6', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoEducationCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!");
        }
  Routine demoCity
    TextComponent demoCityTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent demoCityText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ¿En qué CIUDAD vives? Escríbela y pulsa ENTER para continuar.
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    TextComponent demoCityTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona ENTER para continuar.
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    TextComponent demoCityTextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent demoCityCode
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        inputText = "";
        isAccented = false;
      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys()
        i = 0 # index whether how many keys have been previously pressed

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('city', inputText) # save data
                core.quit()
            # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                if (inputText!=''):
                    city = inputText
                    thisExp.addData('city', inputText) # save data
                    continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            # and 'minus' is pressed, add apostrophe
            elif (keys[i]=='minus'):
                inputText += "'"
            elif (keys[i]=='semicolon'): # if 'semicolon' is pressed, write 'ñ'
                inputText += '\u00d1'
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                isAccented = True
            # ... and any other allowed key is pressed, print it
            elif (isAccented): # if accent is flagged
                if keys[i]=='a': # and 'a' is pressed
                    inputText += '\u00c1' # write "Á"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='e'): # and 'e' is pressed
                    inputText += '\u00c9'# write "É"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='i'): # and 'i' is pressed
                    inputText += '\u00cd' # write "Í"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='o'): # and 'o' is pressed
                    inputText += '\u00d3' # write "Ó"
                    isAccented = False # remove accent flag for subsequent keys
                elif (keys[i]=='u'): # and 'u' is pressed
                    inputText += '\u00da' # write "Ú"
                    isAccented = False # remove accent flag for subsequent keys
                else:
                    isAccented = False

                thisExp.addData('city', inputText) # save data
                i = i + 1 # index another key press

            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('city', inputText) # save data
                i = i + 1 # index another key press
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys();
        i = 0;
        if (keys.length) {
            if ((keys[i] === "escape")) {
                psychoJS.experiment.addData("city", inputText);
                core.quit();
            } else {
                if ((keys[i] === "return")) {
                    if ((inputText !== "")) {
                        psychoJS.experiment.addData("city", inputText);
                        continueRoutine = false;
                    }
                } else {
                    if ((keys[i] === "backspace")) {
                        inputText = inputText.slice(0, (- 1));
                    } else {
                        if ((keys[i] === "minus")) {
                            inputText += "'";
                        } else {
                            if ((keys[i] === "semicolon")) {
                                inputText += "\u00d1";
                            } else {
                                if ((keys[i] === "apostrophe")) {
                                    isAccented = true;
                                } else {
                                    if (isAccented) {
                                        if ((keys[i] === "a")) {
                                            inputText += "\u00c1";
                                            isAccented = false;
                                        } else {
                                            if ((keys[i] === "e")) {
                                                inputText += "\u00c9";
                                                isAccented = false;
                                            } else {
                                                if ((keys[i] === "i")) {
                                                    inputText += "\u00cd";
                                                    isAccented = false;
                                                } else {
                                                    if ((keys[i] === "o")) {
                                                        inputText += "\u00d3";
                                                        isAccented = false;
                                                    } else {
                                                        if ((keys[i] === "u")) {
                                                            inputText += "\u00da";
                                                            isAccented = false;
                                                        } else {
                                                            isAccented = false;
                                                        }
                                                    }
                                                }
                                            }
                                        }
                                        psychoJS.experiment.addData("city", inputText);
                                        i = (i + 1);
                                    } else {
                                        inputText += keys[i].toUpperCase();
                                        psychoJS.experiment.addData("city", inputText);
                                        i = (i + 1);
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        print(city)
  Routine demoVision
    TextComponent demoVisionTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent demoVisionText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Tienes problemas de VISIÓN que unas gafas o lentes de contacto NO corrijan?

        s) Sí
        n) No
    TextComponent demoVisionTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona la letra correspondiente.
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    KeyboardComponent demoVisionKey
      allowedKeys = 's', 'n', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoVisionCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!");
        }
  Routine demoLanguage
    TextComponent demoLanguageTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent demoLanguageText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Se te ha diagnosticado algún TRASTORNO DEL LENGUAJE (como DISLEXIA) o de la AUDICIÓN?

        s) Sí
        n) No
    TextComponent demoLanguageTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona la letra correspondiente.
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    KeyboardComponent demoLanguageKey
      allowedKeys = 's', 'n', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoLanguageCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine setupNoise
    TextComponent setupNoiseTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMACIÓN DEMOGRÁFICA
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    TextComponent setupNoiseText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Puntúa el RUIDO ambiental del lugar donde estás completando este experimento:

        1) Muy silencioso (como una biblioteca)
        2) Algo silencioso (como una oficina)
        3) Algo ruidoso (como estar en el parque)
        4) Muy ruidoso (como estar en una calle ajetreada)
    TextComponent setupNoiseTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent setupNoiseKey
      allowedKeys = '1', '2', '3','4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent setupNoiseCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine setupLocation
    TextComponent setupLocationTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PREPARACIÓN
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    TextComponent setupLocationText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Dónde estás llevando a cabo este estudio?

        1) En casa
        2) En la biblioteca
        3) En una cafetería o restaurante
        4) En casa de un/a amigo/a
        5) En la escuela
        6) En el trabajo
        7) Otro

        Por favor, presiona el número correspondiente.
    TextComponent setupLocationTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Presiona el número correspondiente.
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    KeyboardComponent setupLocationKey
      allowedKeys = '1', '2', '3','4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent setupLocationCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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Flow
  Routine setup
  Routine welcome
  Routine description
  Routine voluntary
  Routine contact
  Routine confidentiality
  Routine information
  Routine consent
  Routine languageL1
  Routine languageL2
  Routine languageL2Oral
  Routine languageL2Written
  Routine languageL3
  Routine languageL3Oral
  Routine languageL3Written
  Routine languageCatalanOral
  Routine languageCatalanWritten
  Routine languageCatalanTime
  Routine demoAge
  Routine demoSex
  Routine demoEducation
  Routine demoCity
  Routine demoVision
  Routine demoLanguage
  Routine setupLocation
  Routine setupNoise
  Routine instructions
  Routine instructions2
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = Trials/01_trials_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_id', 109), ('word', 'arbre'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_arbre.wav')]),
      OrderedDict([('trial_id', 147), ('word', 'jaqueta'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_jaqueta.wav')]),
      OrderedDict([('trial_id', 159), ('word', 'onada'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_onada.wav')]),
      OrderedDict([('trial_id', 167), ('word', 'pingui'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_pingui.wav')]),
      OrderedDict([('trial_id', 179), ('word', 'tigre'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_tigre.wav')])]
    Routine fixation
    Routine trial
  LoopTerminator trials_practice
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trials/02_trials_catalan.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_id', 104), ('word', 'abella'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_abella.wav')]),
      OrderedDict([('trial_id', 105), ('word', 'aigua'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_aigua.wav')]),
      OrderedDict([('trial_id', 106), ('word', 'aixeta'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_aixeta.wav')]),
      OrderedDict([('trial_id', 107), ('word', 'amanida'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_amanida.wav')]),
      OrderedDict([('trial_id', 108), ('word', 'ampolla'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_ampolla.wav')]),
      OrderedDict([('trial_id', 110), ('word', 'berenar'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_berenar.wav')]),
      OrderedDict([('trial_id', 111), ('word', 'bibero'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bibero.wav')]),
      OrderedDict([('trial_id', 112), ('word', 'bici'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bici.wav')]),
      OrderedDict([('trial_id', 113), ('word', 'boca'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_boca.wav')]),
      OrderedDict([('trial_id', 114), ('word', 'bol'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bol.wav')]),
      OrderedDict([('trial_id', 115), ('word', 'bolet'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bolet.wav')]),
      OrderedDict([('trial_id', 116), ('word', 'bolquer'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bolquer.wav')])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
    Routine fixation
    Routine trial
  LoopTerminator trials
  Routine farewell
