PsychoPy2experiment version="2020.1.2"
Settings
  Audio lib = sounddevice
  Completed URL = $"https://psy-oxford.sona-systems.com/webstudy_credit.aspx?experiment_id=766&credit_token=23c483c2523249e3bc0bc1ab27a99117&survey_code=" + expInfo['participant'] 
  Data filename = u'Data/%s_%s_%s' % (expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = norm
  Use version = latest
  Window size (pixels) = [1200, 900]
  color = $[-1,-1,-1]
  expName = TranslationElicitation_eng-sona
  logging level = error
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Routines
  Routine trial
    TextComponent trialText
      letterHeight = 0.2
      saveStartStop = False
      startVal [condition] = trialSound.status==FINISHED
      text [set every frame] = '> ' + $inputText
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    SoundComponent trialSound
      sound [set every repeat] = $soundfile
      startVal [time (s)] = 0.0
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    CodeComponent trialCode
      Code Type = Both
      Begin Experiment:
        inputText = '';
      Begin JS Experiment:
        inputText = "";
      Begin JS Routine:
        keysAllowed = ["q", "w", "e", "r", "t", "y", "u", "i", "o", "p", "a", "s", "d", "f", "g", "h", "j", "k", "l", "apostrophe", "z", "x", "c", "v", "b", "n", "m", "escape", "space", "return", "backspace"];
        inputText = "";
        debugText = "";
        isAccented = false;
        error = false;
        keyPressTime = 0;
        trialText.setText("");
      Begin Routine:
        keysAllowed = ['q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'apostrophe', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'escape', 'space', 'return', 'backspace']
        inputText = ''
        debugText = ''
        isAccented = False
        error = False
        keyPressTime = 0
        trialText.setText = ''
      Each Frame:
        keys = event.getKeys(keyList = keysAllowed)

        i = 0

        if trialSound.status==FINISHED: # if audio has finished...

            if len(keys): # if a key has been pressed...

                if 'return' in keys[i]: # and it's 'return'
                    thisExp.addData('trialOffset', t) # save time
                    thisExp.addData('keyPressTime', t) # save time
                    continueRoutine = False

                elif 'escape' in keys[i]: # and it's 'escape'...
                    thisExp.addData('trialOffset', t) # save time
                    core.quit()  # exit

                elif keys[i]=='space': # and it's 'space'...
                    inputText = inputText + ' ' # add a space

                elif keys[i] == 'backspace': # and it's 'backspace'
                    inputText = inputText[:-1]
                    keyPressTime = t # get time
                    error = True
                    inputText = inputText[:-1] # remove last character

                elif 'apostrophe' in keys[i]: # and it's apostrophe
                    inputText += "'" # add apostrophe

                else:
                    inputText += keys[i].upper()

            # save data
                thisExp.addData('keyPressed', keys[i]) # save pressed key
                thisExp.addData('keyPressTime', t) # save time
                thisExp.addData('inputText', inputText) # save text
                thisExp.addData('error', error) # save time
                thisExp.nextEntry()
                i = i+1
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": keysAllowed});
        i = 0;
        if ((trialSound.status === PsychoJS.Status.FINISHED)) {
            if (keys.length) {
                if (_pj.in_es6("return", keys[i])) {
                    psychoJS.experiment.addData("trialOffset", t);
                    psychoJS.experiment.addData("keyPressTime", t);
                    continueRoutine = false;
                } else {
                    if (_pj.in_es6("escape", keys[i])) {
                        psychoJS.experiment.addData("trialOffset", t);
                        psychoJS.quit("You have pressed ESC. The study has finished. Thank you for you participation. Press RETURN to finish.");
                    } else {
                        if ((keys[i] === "space")) {
                            inputText = (inputText + " ");
                        } else {
                            if ((keys[i] === "backspace")) {
                                inputText = inputText.slice(0, (- 1));
                                keyPressTime = t;
                                error = true;
                                inputText = inputText.slice(0, (- 1));
                            } else {
                                if (_pj.in_es6("apostrophe", keys[i])) {
                                    inputText += "'";
                                } else {
                                    inputText += keys[i].toUpperCase();
                                }
                            }
                        }
                    }
                }
                psychoJS.experiment.addData("keyPressed", keys[i]);
                psychoJS.experiment.addData("keyPressTime", t);
                psychoJS.experiment.addData("inputText", inputText);
                psychoJS.experiment.addData("error", error);
                psychoJS.experiment.nextEntry();
                i = (i + 1);
            }
        }
  Routine setup
    TextComponent setupTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SET UP
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    TextComponent setupText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If possible, use Chrome or Mozilla Firefox

        Use a computer or a laptop (not a tablet or a phone)

        Use headphones

        Close all tabs other than this one

        Do not switch tabs in the browser

        If, for any reason, you restart the study (e.g. because you reloaded the website or an internet failure), let us know by sending an email to serene.siow@psy.ox.ac.uk.
    TextComponent setupTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        letterKeysAllowed = ['q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'return', 'backspace', 'escape', 'space']
      Begin Routine:
        # align text to the left
        setupText.alignText = "left"
        welcomeText.alignText = "left"
        descriptionText.alignText = "left"
        voluntaryText.alignText = "left"
        contactText.alignText = "left"
        confidentialityText.alignText = "left"
        informationText.alignText = "left"
        consentText.alignText = "left"
        languageL1Text.alignText = "left"
        languageL2Text.alignText = "left"
        languageL2OralText.alignText = "left"
        languageL2WrittenText.alignText = "left"
        languageL3Text.alignText = "left"
        languageL3OralText.alignText = "left"
        languageL3WrittenText.alignText = "left"
        languageCatalanOralText.alignText = "left"
        languageCatalanWrittenText.alignText = "left"
        demoAgeText.alignText = "left"
        demoSexText.alignText = "left"
        demoEducationText.alignText = "left"
        demoCityText.alignText = "left"
        demoVisionText.alignText = "left"
        demoLanguageText.alignText = "left"
        setupLocationText.alignText = "left"
        setupNoiseText.alignText = "left"
        instructionsText.alignText = "left"
        instructions2Text.alignText = "left"
        beginText.alignText = "left"
        farewellText.alignText = "left"
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
  Routine welcome
    TextComponent welcomeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = WELCOME
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    TextComponent welcomeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a study designed by researchers from the Universitat Pompeu Fabra (Barcelona, Spain) and the University of Oxford (Oxford, UK). The aim of the study is to investigate how toddlers and adults process foreign words. The audios you will listen to throughout this study were recorded in a baby-directed style.

        You have been invited to participate as you are between 18 and 25 years old, and a English native speaker with no knowledge of Spanish or Catalan.
    TextComponent welcomeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent welcomeCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit('Has presionado ESC. El estudio ha terminado. ¡Gracias por participar!');
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine description
    TextComponent descriptionTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OVERVIEW
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    TextComponent descriptionText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Firstly, you will be asked to complete a BRIEF QUESTIONNAIRE (your language profile, level of education, etc.).

        In the main STUDY, you will listen to a series of SPANISH or CATALAN words. Your task will be to GUESS the TRANSLATION of each word in ENGLISH and TYPE your answer using the computer keyboard.

        This should take around 30 minutes.
    TextComponent descriptionTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent descriptionCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine voluntary
    TextComponent voluntaryTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DO I HAVE TO TAKE PART?
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    TextComponent voluntaryText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Participation in this study is absolutely VOLUNTARY. If you do decide to take part, you may withdraw at any point for any reason by pressing the ESC button. However, we are only able to reimburse participants who complete the full task.
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    TextComponent voluntaryTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent voluntaryCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine contact
    TextComponent contactTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONTACT DETAILS
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    TextComponent contactText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you have any questions about this study, please contact the researchers.
        Email: serene.siow@psy.ox.ac.uk

        Principal Investigators: Núria Sebastian-Galles and Kim Plunkett
        Researchers: Gonzalo García-Castro and Serene Siow

        Center for Brain and Cognition, Universitat Pompeu Fabra
        Department of Experimental Psychology, University of Oxford
    TextComponent contactTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent contactCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
  Routine information
    TextComponent informationTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NEED MORE INFORMATION?
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    TextComponent informationText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you have a concern about any aspect of this study, please speak to Serene Siow (serene.siow@psy.ox.ac.uk), and we will do our best to answer your query.

        If you remain unhappy or wish to make a formal complaint, please contact the Chair of the Research Ethics Committee at the University of Oxford.

        Chair, Medical Sciences Interdivisional Research Ethics Committee;
        Email: ethics@medsci.ox.ac.uk
    TextComponent informationTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent informationCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine consent
    TextComponent consentTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMED CONSENT
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    TextComponent consentText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BY PRESSING SPACE, I certify that I am 18 years of age or over. I agree to participate in the study described. I have made this decision based on the information I have read in the consent information. I have had the opportunity to receive any additional details I wanted about the study and understand that I may ask questions in the future. I understand that I may withdraw this consent at any time.
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    TextComponent consentTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent consentKey
      allowedKeys = 'space', 'escape'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent consentCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
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  Routine instructions
    TextComponent instructionsTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS
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    TextComponent instructionsText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will listen to some words through your headphones.

        Words are in Catalan or Spanish and were recorded in a baby-directed manner. You will have to GUESS and TYPE the TRANSLATION of each word IN ENGLISH.

        Start typing as soon as you come up with an answer. It is probable that you do not know it. Type the translation you think is most likely to be correct. You MUST type an answer FOR EACH WORD.

        You can use BACKSPACE to correct any typing errors, as you would normally.

        After typing the word, press RETURN to continue to the next word.
    TextComponent instructionsTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        NEXT, YOU WILL COMPLETE 5 PRACTICE TRIALS

        Press SPACE to continue.
    KeyboardComponent instructionsKeys
      allowedKeys = 'space', 'escape'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent instructionsCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
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  Routine instructions2
    TextComponent instructions2TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS
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    TextComponent instructions2Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You may adjust the volume during these trials to avoid having to do it during the main experiment. Make sure words are loud enough for you to hear them clearly.
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    TextComponent instructions2TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start 5 practice trials >
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    CodeComponent instructions2Code
      Code Type = Both
      Begin Experiment:
        import random
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
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      End JS Routine:
        // randomise testing language (between-participant)
        versions = ['catalan', 'spanish'];
        versionRandom = versions[Math.floor(Math.random() *  versions.length)]; // ... randomly assign to Catalan or Spanish
        if (versionRandom==="catalan") {
            trialsPracticeCatalanReps = 1;
            trialsPracticeSpanishReps = 0;
            trialsCatalanReps = 1;
            trialsSpanishReps = 0;
            } else if (versionRandom==="spanish") {
                trialsPracticeCatalanReps = 0;
                trialsPracticeSpanishReps = 1;
                trialsCatalanReps = 0;
                trialsSpanishReps = 1;
                }
      End Routine:
        # randomise testing language (between-participant)
        versions = ['catalan', 'spanish']
        versionRandom = random.sample(['catalan', 'spanish'])
        if (versionRandom=="catalan"):
            trialsPracticeCatalanReps = 1
            trialsPracticeSpanishReps = 0
            trialsPatalanReps = 1
            trialsPpanishReps = 0
        else:
            trialsPracticeCatalanReps = 0
            trialsPracticeSpanishReps = 1
            trialsCatalanReps = 0
            trialsSpanishReps = 1
  Routine begin
    TextComponent beginText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the PRACTICE trials.
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    TextComponent beginNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start >
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    CodeComponent beginCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
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  Routine farewell
    TextComponent farewellText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congratulations! You have finished.

        THANKS A LOT FOR YOUR PARTICIPATION.

        If you have any questions, get in touch with us at serene.siow@ox.ac.uk

        Press SPACE to be redirected to SONA.

        Please, wait to be redirected to SONA, otherwise you may not receive your credit.
    CodeComponent farewellCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space', 'return'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space", "return"]});
        n = keys.length;
        if ((keys.includes("escape"))) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        } else if ((keys.includes("space", keys))) {
            continueRoutine = false;
          }
  Routine confidentiality
    TextComponent confidentialityTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = HOW WILL MY DATA BE USED?
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    TextComponent confidentialityText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your answers will be completely ANONYMOUS, and we will take all reasonable measures to ensure that they remain confidential.

        Your DATA WILL BE STORED in a password-protected file and MAY BE USED in academic publications IN AN ANONYMISED FORM. Your IP address will NOT BE STORED. Research data will be stored for a minimum of three years after publication or public release.

        We would also like your permission to use your anonymised data in future studies, and to SHARE data with other researchers (e.g. in online databases). Any personal information that could identify you will be REMOVED or REPLACED before files are SHARED with other researchers or results are MADE PUBLIC.

        This project has received ethics clearance through the University of Oxford Central University Research Ethics Committee, R60939/RE005.
    TextComponent confidentialityTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    CodeComponent confidentialityCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
      Each JS Frame:
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  Routine fixation
    TextComponent fixationText
      color = yellow
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine questionnaire
    TextComponent questionnaireTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CUESTIONARIO
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    TextComponent questionnaireText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemText
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    TextComponent questionnaireTextResponse
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $inputText
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    TextComponent questionnaireTextDebug
      color = blue
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $debugText
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    CodeComponent questionnaireCode
      Code Type = Auto->JS
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      Begin Routine:
        # if language2 or language3 were left blank, skip questions related to them
        typeItems = ["language2", "language3", "demographicsAge", "demographicsCity"];
        # initialise variables
        psychopy.event.clearEvents()
        keys = ''
        inputText = ''
        isAccented = False
        debugText = ''

        if (itemLabel in ['language2Oral', 'language2Written', 'language3Oral', 'language3Written']):
            if (language2 in ''):
                continueRoutine = False
            elif (itemLabel in ['language3Oral', 'language3Written']):
                if (language3 in ''):
                    continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        i = 0 # index whether how many keys have been previously pressed
        print('NO KEY PRESSED')

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...
            print('KEY PRESSED')
            debugText += keys[i]

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                print('ESCAPE')
                core.quit()

            # and item is 2 or 3...
            if itemLabel in typeItems:
                print('itemLabel is in typeItems')
                # ... and RETURN is pressed, stop trial
                if (keys[i]=='return'):
                    print('RETURN')
                    if (itemLabel=='language2'):
                        language2 = inputText
                        if language2=='':
                            language3=='':
                        thisExp.addData('questionnaireResponse', inputText) # save data
                        continueRoutine = False
                    elif (itemLabel=='language3'):
                        language3 = inputText
                        thisExp.addData('questionnaireResponse', inputText) # save data
                        continueRoutine = False
                    elif (itemLabel=='demographicsAge' or itemLabel=='demographicsCity'):
                        if (inputText != ''):
                            thisExp.addData('questionnaireResponse', inputText) # save data
                            continueRoutine = False

                    # ... and BACKSPACE is pressed, delete last character
                    else:
                        print('itemLabel NOT in typeItems')

                        if keys[i]=='backspace':
                            inputText = inputText[:-1]
                            # and 'minus' is pressed, add apostrophe
                        elif keys[i]=='minus':
                            inputText += "'"
                        elif keys[i]=='semicolon': # if 'semicolon' is pressed, write 'ñ'
                            inputText += '\u00d1'
                        # and 'apostrophe' is pressed, flag accent
                        elif keys[i]=='apostrophe':
                            isAccented = True
                            # ... and any other allowed key is pressed, print it
                        elif (isAccented): # if accent is flagged
                            if keys[i]=='a': # and 'a' is pressed
                                inputText += '\u00c1' # write "Á"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='e': # and 'e' is pressed
                                inputText += '\u00c9'# write "É"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='i': # and 'i' is pressed
                                inputText += '\u00cd' # write "Í"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='o': # and 'o' is pressed
                                inputText += '\u00d3' # write "Ó"
                                isAccented = False # remove accent flag for subsequent keys
                            elif keys[i]=='u': # and 'u' is pressed
                                inputText += '\u00da' # write "Ú"
                                isAccented = False # remove accent flag for subsequent keys

                            # write key as it is (in capital letters)
                            inputText += keys[i].upper();
                            thisExp.addData('questionnaireResponse', inputText) # save data
                            i = i + 1 # index another key press
            else:
                thisExp.addData('questionnaireResponse', keys[i]) # save data
                continueRoutine = False
  Routine languageL1
    TextComponent languageL1TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL1Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What is your NATIVE language?

        e) English
        s) Spanish
        c) Catalan
        o) Other
    TextComponent languageL1TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent languageL1Key
      allowedKeys = 'e', 's', 'c', 'o', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL1Code
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageL2
    TextComponent languageL2TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL2Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you know any other SECOND LANGUAGE, different than the one you indicated before? If yes, type which one and press RETURN. If no, press RETURN without writing anything.
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    TextComponent languageL2TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent languageL2TextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent languageL2Code
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        inputText = "";
        isAccented = false;
      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keyList = letterKeysAllowed)
        i = 0 # index whether how many keys have been previously pressed

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('languageL2', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            if (keys[i]=='return'):
                languageL2value = inputText
                if (inputText==''):
                    languageL3value=''
                thisExp.addData('languageL2', inputText) # save data
                continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            elif (keys[i]=='space'):
                inputText += ' ';
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                inputText="'"
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('languageL2', inputText) # save data
                i = i + 1 # index another key press
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({"keyList": letterKeysAllowed});
        i = 0;
        if (keys.length) {
            if ((keys[i] === "escape")) {
                psychoJS.experiment.addData("languageL2", inputText);
                psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation. Press RETURN to exit.");
            }
            if ((keys[i] === "return")) {
                languageL2value = inputText;
                if ((inputText === "")) {
                    languageL3value = "";
                }
                psychoJS.experiment.addData("languageL2", inputText);
                continueRoutine = false;
            } else {
                if ((keys[i] === "backspace")) {
                    inputText = inputText.slice(0, (- 1));
                } else {
                    if ((keys[i] === "space")) {
                        inputText += " ";
                    } else {
                        if ((keys[i] === "apostrophe")) {
                            inputText = "'";
                        } else {
                            inputText += keys[i].toUpperCase();
                            psychoJS.experiment.addData("languageL2", inputText);
                            i = (i + 1);
                        }
                    }
                }
            }
        }
      End JS Routine:
        console.log(languageL2value);
      End Routine:
        print(languageL2value)
  Routine languageL3
    TextComponent languageL3TextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL3Text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you know any other THIRD LANGUAGE, different than the ones you indicated before? If yes, type which one(s) and press RETURN. If no, press RETURN leaving it blank.
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    TextComponent languageL3TextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent languageL3TextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent languageL3Code
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        if languageL2value=='':
            continueRoutine = False

        keys = event.getKeys(keyList = letterKeysAllowed)
        i = 0 # index whether how many keys have been previously pressed

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('languageL3', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                languageL3value = inputText
                thisExp.addData('languageL3', inputText) # save data
                continueRoutine = False
            # ... and SPACE is pressed, add space
            elif (keys[i]=='space'):
                inputText += ' '
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                inputText = "'"
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('languageL3', inputText) # save data
                i = i + 1 # index another key press
      End Routine:
        print(languageL3value)
  Routine languageL2Oral
    TextComponent languageL2OralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL2OralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in your SECOND LANGUAGE?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native /  I am native
    TextComponent languageL2OralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL2OralKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL2OralCode
      Code Type = Both
      Each Frame:
        if languageL2=='':
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        if ((languageL2value==="")) {
            continueRoutine = false;
            }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageL2Written
    TextComponent languageL2WrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL2WrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in your SECOND LANGUAGE?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageL2WrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL2WrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL2WrittenCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if languageL2=='':
            continueRoutine = False

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        if ((languageL2value === "")) {
            continueRoutine = false;
        }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageL3Oral
    TextComponent languageL3OralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL3OralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in your THIRD LANGUAGE?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native / I am native
    TextComponent languageL3OralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL3OralKey
      allowedKeys = '1', '2', '3','4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL3OralCode
      Code Type = Both
      Each Frame:
        if languageL3value=='' or languageL2value=='':
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        if ((languageL2value === "" || languageL3value === "")) {
            continueRoutine = false;
        }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageCatalanOral
    TextComponent languageCatalanOralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageCatalanOralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in CATALAN?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native /  I am native
    TextComponent languageCatalanOralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageCatalanOralKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanOralCode
      Code Type = Auto->JS
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      Each Frame:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="CATALAN" or languageL3value=="CATALAN"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageL3Written
    TextComponent languageL3WrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL3WrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in your THIRD LANGUAGE?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageL3WrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL3WrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL3WrittenCode
      Code Type = Both
      Each Frame:
        if languageL3=='':
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        if ((languageL2value === "" || languageL3value=== "")) {
            continueRoutine = false;
        }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageCatalanWritten
    TextComponent languageCatalanWrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageCatalanWrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in CATALAN?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageCatalanWrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageCatalanWrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanWrittenCode
      Code Type = Both
      Each Frame:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="CATALAN" or languageL3value=="CATALAN"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        // if Catalan is L2 or L3, skip
        if ((languageL2value==="CATALAN" || languageL3value==="CATALAN")) {
            continueRoutine = false;
            }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageCatalanTime
    TextComponent languageCatalanTimeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageCatalanTimeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How long have you spent in any REGION where CATALAN is spoken (Catalonia, Valencia, Balearic Islands), including your childhood? Pick the option that best describes your situation:

        1) Never or less than 1 month
        2) Between 1 and 3 months
        3) I used to spend holidays there
        4) I lived there for less than 6 months
        5) I lived there for 6 months or longer
    TextComponent languageCatalanTimeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageCatalanTimeKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanTimeCode
      Code Type = Both
      Each Frame:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="CATALAN" or languageL3value=="CATALAN"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        // if Catalan is L2 or L3, skip
        if ((languageL2value==="CATALAN" || languageL3value==="CATALAN")) {
            continueRoutine = false;
            }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine demoAge
    TextComponent demoAgeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoAgeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please, type your age (in years) and then press RETURN:
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    TextComponent demoAgeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent demoAgeTextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent demoAgeCode
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        inputText = "";
        isAccented = false;
      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keylist:['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'escape', 'backspace', 'return'])
        i = 0 # index whether how many keys have been previously pressed

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                age = inputText
                thisExp.addData('age', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                if (inputText != ''):
                    language2 = inputText
                    thisExp.addData('age', inputText) # save data
                    continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('age', inputText) # save data
                i = i + 1 # index another key press
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys({keyList:['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'escape', 'return', 'backspace']});
        i = 0;
        if (keys.length) {
            if ((keys[i] === "escape")) {
                psychoJS.experiment.addData("age", inputText);
                psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
            } else if ((keys[i] === "return" && inputText !== "")) {
                psychoJS.experiment.addData("age", inputText);
                continueRoutine = false;
            } else if ((keys[i] === "return" && inputText==="")) {
                inputText = "";
            } else if ((keys[i] === "backspace")) {
                inputText = inputText.slice(0, (- 1));
            } else {
                inputText += keys[i].toUpperCase();
                psychoJS.experiment.addData("age", inputText);
                i = (i + 1);
                }
            }
      End Routine:
        print(age)
  Routine demoSex
    TextComponent demoSexTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoSexText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sex:

        f) Female
        m) Male
        o) Other
    TextComponent demoSexTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent demoSexKey
      allowedKeys = 'm', 'f', 'o', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoSexCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine demoEducation
    TextComponent demoEducationTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoEducationText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What is your highest level of EDUCATIONAL ACHIEVEMENT?

        1) No qualifications
        2) Left school at 16 with GCSE or equivalent
        3) Left school at 18 with A-Levels or equivalent
        4) University degree or equivalent
        5) Vocational training
    TextComponent demoEducationTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent demoEducationKey
      allowedKeys = '1', '2', '3','4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoEducationCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine demoCity
    TextComponent demoCityTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoCityText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What CITY do you live in? Type it and press RETURN to continue.
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    TextComponent demoCityTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent demoCityTextInput
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = '> ' + $inputText
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    CodeComponent demoCityCode
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keyList = letterKeysAllowed)
        i = 0 # index whether how many keys have been previously pressed

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('city', inputText) # save data
                core.quit()
            # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                if (inputText!=''):
                    thisExp.addData('city', inputText) # save data
                    continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                textInput += "'"
                thisExp.addData('city', inputText) # save data
                i = i + 1 # index another key press

            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('city', inputText) # save data
                i = i + 1 # index another key press
  Routine demoVision
    TextComponent demoVisionTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoVisionText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you have normal or corrected-to-normal VISION?

        y) Yes
        n) No
    TextComponent demoVisionTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent demoVisionKey
      allowedKeys = 'y', 'n', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoVisionCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine demoLanguage
    TextComponent demoLanguageTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoLanguageText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Have you been diagnosed with any LANGUAGE (e.g., DYSLEXIA) OR HEARING IMPAIRMENT?

        y) Yes
        n) No
    TextComponent demoLanguageTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent demoLanguageKey
      allowedKeys = 'y', 'n', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent demoLanguageCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine setupNoise
    TextComponent setupNoiseTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent setupNoiseText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How NOISY was the environment in which you completed the experiment?

        1) Very quiet (like a library)
        2) Somewhat quiet (like an office)
        3) Somewhat noisy (like being at the park)
        4) Very noisy (like being at a busy street)
    TextComponent setupNoiseTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent setupNoiseKey
      allowedKeys = '1', '2', '3','4', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent setupNoiseCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine setupLocation
    TextComponent setupLocationTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent setupLocationText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        WHERE are you completing this study?

        1) At home
        2) At the library
        3) At a cafe or restaurant
        4) At a friend’s house
        5) At school
        6) At work
        7) Other
    TextComponent setupLocationTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent setupLocationKey
      allowedKeys = '1', '2', '3','4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent setupLocationCode
      Code Type = Both
      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
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  Routine languageSpanishWritten
    TextComponent languageSpanishWrittenTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageSpanishWrittenText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in SPANISH?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageSpanishWrittenTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageSpanishWrittenKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageSpanishWrittenCode
      Code Type = Both
      Each Frame:
        # if Spanish is L2 or L3, skip
        if (languageL2value=="SPANISH" or languageL3value=="SPANISH"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        // if Spanish is L2 or L3, skip
        if ((languageL2value==="SPANISH" || languageL3value==="SPANISH")) {
            continueRoutine = false;
            }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageSpanishOral
    TextComponent languageSpanishOralTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageSpanishOralText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in SPANISH?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native /  I am native
    TextComponent languageSpanishOralTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageSpanishOralKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageSpanishOralCode
      Code Type = Both
      Each Frame:
        # if Spanish is L2 or L3, skip
        if (languageL2value=="SPANISH" or languageL3value=="SPANISH"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        // if Spanish is L2 or L3, skip
        if ((languageL2value==="SPANISH" || languageL3value==="SPANISH")) {
            continueRoutine = false;
            }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (((languageL2value === "SPANISH") || (languageL3value === "SPANISH"))) {
            continueRoutine = false;
        }
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
  Routine languageSpanishTime
    TextComponent languageSpanishTimeTextTitle
      color = yellow
      letterHeight = 0.11
      pos = (0, 0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageSpanishTimeText
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How long have you spent in any REGION where SPANISH is spoken (Spain, South America), including your childhood? Pick the option that best describes your situation:

        1) Never or less than 1 month
        2) Between 1 and 3 months
        3) I used to spend holidays there
        4) I lived there for less than 6 months
        5) I lived there for 6 months or longer
    TextComponent languageSpanishTimeTextNext
      color = yellow
      letterHeight = 0.06
      pos = (0.7, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageSpanishTimeKey
      allowedKeys = '1', '2', '3', '4', '5', 'escape'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageSpanishTimeCode
      Code Type = Both
      Each Frame:
        # if Spanish is L2 or L3, skip
        if (languageL2value=="SPANISH" or languageL3value=="SPANISH"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
      Each JS Frame:
        // if Spanish is L2 or L3, skip
        if ((languageL2value==="SPANISH" || languageL3value==="SPANISH")) {
            continueRoutine = false;
            }

        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys({"keyList": ["escape", "space"]});
        n = keys.length;
        if (_pj.in_es6("escape", keys)) {
            psychoJS.quit("You have pressed ESC. The study has finished. Thank you for your participation! Press RETURN to exit.");
        }
Flow
  Routine setup
  Routine welcome
  Routine description
  Routine voluntary
  Routine contact
  Routine confidentiality
  Routine information
  Routine consent
  Routine languageL1
  Routine languageL2
  Routine languageL2Oral
  Routine languageL2Written
  Routine languageL3
  Routine languageL3Oral
  Routine languageL3Written
  Routine languageCatalanOral
  Routine languageCatalanWritten
  Routine languageCatalanTime
  Routine languageSpanishOral
  Routine languageSpanishWritten
  Routine languageSpanishTime
  Routine demoAge
  Routine demoSex
  Routine demoEducation
  Routine demoCity
  Routine demoVision
  Routine demoLanguage
  Routine setupLocation
  Routine setupNoise
  Routine instructions
  Routine instructions2
  LoopInitiator trialsPracticeCatalan loopType="TrialHandler"
    conditionsFile = Trials/01_trials_practice_catalan.xlsx
    loopType = random
    nReps = trialsPracticeCatalanReps
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    conditions:
      [OrderedDict([('trial_id', 109), ('word', 'arbre'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_arbre.mp3')]),
      OrderedDict([('trial_id', 126), ('word', 'corona'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_corona.mp3')]),
      OrderedDict([('trial_id', 147), ('word', 'jaqueta'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_jaqueta.mp3')]),
      OrderedDict([('trial_id', 159), ('word', 'onada'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_onada.mp3')]),
      OrderedDict([('trial_id', 179), ('word', 'tigre'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_tigre.mp3')])]
    Routine fixation
    Routine trial
  LoopTerminator trialsPracticeCatalan
  LoopInitiator trialsPracticeSpanish loopType="TrialHandler"
    conditionsFile = Trials/01_trials_practice_spanish.xlsx
    loopType = random
    nReps = trialsPracticeSpanishReps
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    conditions:
      [OrderedDict([('trial_id', 1), ('word', 'arbol'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/cat_arbol.mp3')]),
      OrderedDict([('trial_id', 30), ('word', 'corona'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_corona.mp3')]),
      OrderedDict([('trial_id', 26), ('word', 'chaqueta'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/cat_chaqueta.mp3')]),
      OrderedDict([('trial_id', 70), ('word', 'ola'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/cat_ola.mp3')]),
      OrderedDict([('trial_id', 96), ('word', 'tigre'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/cat_tigre.mp3')])]
    Routine fixation
    Routine trial
  LoopTerminator trialsPracticeSpanish
  Routine begin
  LoopInitiator trialsCatalan loopType="TrialHandler"
    conditionsFile = Trials/02_trials_catalan.xlsx
    loopType = random
    nReps = trialsCatalanReps
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    conditions:
      [OrderedDict([('trial_id', 104), ('word', 'abella'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_abella.mp3')]),
      OrderedDict([('trial_id', 105), ('word', 'aigua'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_aigua.mp3')]),
      OrderedDict([('trial_id', 106), ('word', 'aixeta'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_aixeta.mp3')]),
      OrderedDict([('trial_id', 107), ('word', 'amanida'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_amanida.mp3')]),
      OrderedDict([('trial_id', 108), ('word', 'ampolla'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_ampolla.mp3')]),
      OrderedDict([('trial_id', 109), ('word', 'arbre'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_arbre.mp3')]),
      OrderedDict([('trial_id', 110), ('word', 'berenar'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_berenar.mp3')]),
      OrderedDict([('trial_id', 111), ('word', 'bibero'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bibero.mp3')]),
      OrderedDict([('trial_id', 112), ('word', 'bici'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bici.mp3')]),
      OrderedDict([('trial_id', 113), ('word', 'boca'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_boca.mp3')]),
      OrderedDict([('trial_id', 114), ('word', 'bol'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bol.mp3')]),
      OrderedDict([('trial_id', 115), ('word', 'bolet'), ('test_language', 'Catalan'), ('soundfile', 'Sounds/cat_bolet.mp3')])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
    Routine fixation
    Routine trial
  LoopTerminator trialsCatalan
  LoopInitiator trialsSpanish loopType="TrialHandler"
    conditionsFile = Trials/02_trials_spanish.xlsx
    loopType = random
    nReps = trialsSpanishReps
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    conditions:
      [OrderedDict([('trial_id', 2), ('word', 'avestruz'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_avestruz.mp3')]),
      OrderedDict([('trial_id', 3), ('word', 'barco'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_barco.mp3')]),
      OrderedDict([('trial_id', 4), ('word', 'biberon'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_biberon.mp3')]),
      OrderedDict([('trial_id', 5), ('word', 'bici'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_bici.mp3')]),
      OrderedDict([('trial_id', 6), ('word', 'boca'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_boca.mp3')]),
      OrderedDict([('trial_id', 7), ('word', 'bocadillo'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_bocadillo.mp3')]),
      OrderedDict([('trial_id', 8), ('word', 'bol'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_bol.mp3')]),
      OrderedDict([('trial_id', 9), ('word', 'boli'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_boli.mp3')]),
      OrderedDict([('trial_id', 10), ('word', 'botella'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_botella.mp3')]),
      OrderedDict([('trial_id', 11), ('word', 'boton'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_boton.mp3')]),
      OrderedDict([('trial_id', 12), ('word', 'brazo'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_brazo.mp3')]),
      OrderedDict([('trial_id', 13), ('word', 'buho'), ('test_language', 'Spanish'), ('soundfile', 'Sounds/spa_buho.mp3')])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
    Routine fixation
    Routine trial
  LoopTerminator trialsSpanish
  Routine farewell
