PsychoPy2experiment version="3.2.4"
Settings
  Audio lib = ptb
  Data filename = u'Data/%s_%s_%s' % (expName, data.getDateStr(format="%Y-%m-%d-%H%M"), expInfo['Code'])
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.1
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = TransElicitation
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Routines
  Routine block_welcome
    TextComponent text_welcome
      letterHeight = 0.1
      pos = (0.0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome!
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    TextComponent welcome_text
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please, use headphones
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    TextComponent welcome_next
      color = yellow
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'return' key >>
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    KeyboardComponent welcome_key
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent welcome_code
      Code Type = Both
      Begin Experiment:
        expInfo['date'] = data.getDateStr(format="%Y-%m-%d-%H%M")
        expInfo['experiment'] = 'TransElicitation'

        globalClock = core.Clock()

        print('Log')
      Begin JS Experiment:
        expInfo['date'] = data.getDateStr(format="%Y-%m-%d-%H%M");
        expInfo['experiment'] = 'TransElicitation';
        globalClock = core.Clock();
  Routine block_trial
    TextComponent trial_fixation
      color = yellow
      letterHeight = 0.20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent trial_word
      disabled = True
      letterHeight = 0.025
      pos = (-0.4, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.5
      text [set every repeat] = '[Testing sound: ' + $Word +']'
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    SoundComponent trial_sound
      sound [set every repeat] = $FileName
      startVal [time (s)] = 1.0
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    TextComponent trial_response_display
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.5
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    CodeComponent trial_code
      Code Type = Both
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase)

        from psychopy import core
        globalClock = core.Clock()
      Begin JS Experiment:
        import string;
        allLetters = list(string.ascii_lowercase);

        from psychopy import core;
        globalClock = core.Clock();
      Begin Routine:
        textFill = '';
        response = False;
        trialClock = core.Clock();
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys and not response and trialClock.getTime() > 1.0:
                firstKeyRT = trialClock.getTime()
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                trial_response_display.setText(textFill)  # Set new text on screen
            elif keys and response and trialClock.getTime() > 1.0:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                    trial_response_display.setText(textFill)
      Each JS Frame:
        keys = event.getKeys();
        if ('escape' in keys) {
            core.quit();
            }
        else {
            if (keys==true && response!=true && trialClock.getTime() > 1.0) {
                firstKeyRT = trialClock.getTime();
                if (keys[0] == 'space') {
                    textFill += ' ';
                    }
                elif (keys[0] in allLetters) {
                    textFill+=keys[0];
                    }
                trial_response_display.setText(textFill);
            elif (keys && response && trialClock.getTime() > 1.0) {
                if (keys[0] == 'space') {
                    textFill += ' ';
                    }
                elif (keys[0] in allLetters) {
                    textFill+=keys[0];
                    trial_response_display.setText(textFill);
                    }
      End Routine:
        thisExp.addData('keyPresses', textFill)
        thisExp.addData('firstKeyRT', firstKeyRT)

        textFill = ''
  Routine block_farewell
    TextComponent farewell_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you!
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    KeyboardComponent farewell_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent farewell_next
      color = yellow
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'return' key >>
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  Routine block_form
    CodeComponent form_code
      Code Type = Py
      Begin Routine:
        info = {'experiment:': 'Translation Elicitation Task',
                'date_test': expInfo['date'],
                'code': '',
                'date_birth': 'dd/mm/yyyy',
                'sex': ['Female', 'Male', 'Other'],
                'city': ['Oxford', 'London', 'Barcelona', 'Madrid'],
                'language': ['English', 'Spanish', 'Catalan'],
                'prof_eng': 0,
                'prof_spa': 0,
                'prof_cat': 0}

        print('Dict created')
      Each Frame:
        info = gui.DlgFromDict(dictionary = info,
                               fixed = ['date_test'],
                               title = expInfo['experiment'],
                               order = ['date_test', 'code', 'date_birth', 'sex', 'city', 'language', 'prof_eng', 'prof_spa', 'prof_cat'],
                               tip = {'language': 'Which is you native language?',
                                      'prof_eng': 'How proficient are you in English? 0 = I have no idea, 1 = Native level',
                                      'prof_spa': 'How proficient are you in Spanish? 0 = I have no idea, 1 = Native level',
                                      'prof_cat': 'How proficient are you in Catalan? 0 = I have no idea, 1 = Native level'},
                               show = True
        )

        print('Dict updated')
      End Routine:
        info = info.data[0]
        print (info)

        print('GUI ended')
  Routine block_instructions
    TextComponent instructions_title
      color = yellow
      letterHeight = 0.08
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In each trial, you will first see a cross.

        Then, you will listen a word in Catalan.

        Type its translation in English.

        Be fast, be accurate.

        You have 5 seconds to answer.
    TextComponent instructions_next
      color = yellow
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'return' to start! >>
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    KeyboardComponent instructions_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine block_welcome
  Routine block_instructions
  LoopInitiator loop_trials loopType="TrialHandler"
    conditionsFile = Stimuli/trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialID', 1), ('Word', 'abella'), ('FileName', 'Stimuli/Sounds/abella.wav')]),
      OrderedDict([('TrialID', 2), ('Word', 'aigua'), ('FileName', 'Stimuli/Sounds/aigua.wav')]),
      OrderedDict([('TrialID', 3), ('Word', 'aixeta'), ('FileName', 'Stimuli/Sounds/aixeta.wav')]),
      OrderedDict([('TrialID', 4), ('Word', 'amanida'), ('FileName', 'Stimuli/Sounds/amanida.wav')]),
      OrderedDict([('TrialID', 5), ('Word', 'ampolla'), ('FileName', 'Stimuli/Sounds/ampolla.wav')]),
      OrderedDict([('TrialID', 6), ('Word', 'arbre'), ('FileName', 'Stimuli/Sounds/arbre.wav')]),
      OrderedDict([('TrialID', 7), ('Word', 'berenar'), ('FileName', 'Stimuli/Sounds/berenar.wav')]),
      OrderedDict([('TrialID', 8), ('Word', 'bibero'), ('FileName', 'Stimuli/Sounds/bibero.wav')]),
      OrderedDict([('TrialID', 9), ('Word', 'bici'), ('FileName', 'Stimuli/Sounds/bici.wav')]),
      OrderedDict([('TrialID', 10), ('Word', 'boca'), ('FileName', 'Stimuli/Sounds/boca.wav')]),
      OrderedDict([('TrialID', 11), ('Word', 'bol'), ('FileName', 'Stimuli/Sounds/bol.wav')]),
      OrderedDict([('TrialID', 12), ('Word', 'bolet'), ('FileName', 'Stimuli/Sounds/bolet.wav')]),
      OrderedDict([('TrialID', 13), ('Word', 'bolquer'), ('FileName', 'Stimuli/Sounds/bolquer.wav')]),
      OrderedDict([('TrialID', 14), ('Word', 'boto'), ('FileName', 'Stimuli/Sounds/boto.wav')]),
      OrderedDict([('TrialID', 15), ('Word', 'bou'), ('FileName', 'Stimuli/Sounds/bou.wav')]),
      OrderedDict([('TrialID', 16), ('Word', 'caixa'), ('FileName', 'Stimuli/Sounds/caixa.wav')])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
    Routine block_trial
  LoopTerminator loop_trials
  Routine block_farewell
