PsychoPy2experiment version="2022.1.3"
Settings
  Audio lib = sounddevice
  Completed URL = https://app.prolific.co/submissions/complete?cc=61C2960C
  Experiment info = {'participant': ''}
  Full-screen window = False
  Incomplete URL = https://app.prolific.co/submissions/complete?cc=61C2960C
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.3
  Window size (pixels) = [1200, 900]
  color = $[-1, -1, -1]
  expName = translationelicitation_eng-confidence
  keyboardBackend = ioHub
  logging level = error
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Routines
  Routine setup
    TextComponent setupTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SETUP
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    TextComponent setupText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If possible, use Chrome or Mozilla Firefox

        Use a computer or a laptop (not a tablet or a phone)

        Use headphones

        Close all tabs other than this one

        Do not switch tabs in the browser

        If, for any reason, you restart the study (e.g. because you reloaded the website or an internet failure), let us know by sending an email to serene.siow@psy.ox.ac.uk.
    TextComponent setupNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent setupNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent setupCode
      Code Type = Both
      Begin Experiment:
        letterKeysAllowed = ['q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'return', 'backspace', 'escape', 'space']
        inputText = ''
        languageL2 = ''
        languageL3 = ''
      Begin JS Routine:
        setupText.alignText = "left";
        welcomeText.alignText = "left";
        descriptionText.alignText = "left";
        voluntaryText.alignText = "left";
        contactText.alignText = "left";
        confidentialityText.alignText = "left";
        informationText.alignText = "left";
        consentText.alignText = "left";
        languageL1Text.alignText = "left";
        languageL2Text.alignText = "left";
        languageL2OralText.alignText = "left";
        languageL2WrittenText.alignText = "left";
        languageL3Text.alignText = "left";
        languageL3OralText.alignText = "left";
        languageL3WrittenText.alignText = "left";
        languageCatalanOralText.alignText = "left";
        languageCatalanWrittenText.alignText = "left";
        languageCatalanTimeText.alignText = "left";
        languageSpanishOralText.alignText = "left";
        languageSpanishWrittenText.alignText = "left";
        languageSpanishTimeText.alignText = "left";
        demoAgeText.alignText = "left";
        demoSexText.alignText = "left";
        demoEducationText.alignText = "left";
        demoCityText.alignText = "left";
        demoVisionText.alignText = "left";
        demoLanguageText.alignText = "left";
        setupLocationText.alignText = "left";
        setupNoiseText.alignText = "left";
        instructionsText.alignText = "left";
        instructions2Text.alignText = "left";
      Begin Routine:
        # align text to the left
        setupText.alignText = "left"
        welcomeText.alignText = "left"
        descriptionText.alignText = "left"
        voluntaryText.alignText = "left"
        contactText.alignText = "left"
        confidentialityText.alignText = "left"
        informationText.alignText = "left"
        consentText.alignText = "left"
        languageL1Text.alignText = "left"
        languageL2Text.alignText = "left"
        languageL2OralText.alignText = "left"
        languageL2WrittenText.alignText = "left"
        languageL3Text.alignText = "left"
        languageL3OralText.alignText = "left"
        languageL3WrittenText.alignText = "left"
        languageCatalanOralText.alignText = "left"
        languageCatalanWrittenText.alignText = "left"
        languageCatalanTimeText.alignText = "left"
        languageSpanishOralText.alignText = "left"
        languageSpanishWrittenText.alignText = "left"
        languageSpanishTimeText.alignText = "left"
        demoAgeText.alignText = "left"
        demoSexText.alignText = "left"
        demoEducationText.alignText = "left"
        demoCityText.alignText = "left"
        demoVisionText.alignText = "left"
        demoLanguageText.alignText = "left"
        setupLocationText.alignText = "left"
        setupNoiseText.alignText = "left"
        instructionsText.alignText = "left"
        instructions2Text.alignText = "left"
  Routine welcome
    TextComponent welcomeTextTitle
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = WELCOME
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    TextComponent welcomeText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a study designed by researchers from the Universitat Pompeu Fabra (Barcelona, Spain) and the University of Oxford (Oxford, UK).

        The aim of the study is to investigate how toddlers and adults process foreign words. The audios you will listen to throughout this study were recorded in a baby-directed style.

        You have been invited to participate as you are between 18 and 25 years old, and a English native speaker with no knowledge of Spanish or Catalan.
    TextComponent welcomeNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent welcomeNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine description
    TextComponent descriptionTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = OVERVIEW
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    TextComponent descriptionText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Firstly, you will be asked to complete a BRIEF QUESTIONNAIRE (your language profile, level of education, etc.).

        In the main STUDY, you will listen to a series of SPANISH or CATALAN words. Your task will be to GUESS the TRANSLATION of each word in ENGLISH and TYPE your answer using the computer keyboard.

        This should take around 30 minutes.
    TextComponent descriptionNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent descriptionNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine voluntary
    TextComponent voluntaryTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DO I HAVE TO TAKE PART?
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    TextComponent voluntaryText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Participation in this study is absolutely VOLUNTARY. If you do decide to take part, you may withdraw at any point for any reason by pressing the ESC button. However, we are only able to reimburse participants who complete the full task.
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    TextComponent voluntaryNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent voluntaryNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine contact
    TextComponent contactTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = CONTACT DETAILS
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    TextComponent contactText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you have any questions about this study, please contact the researchers.

        Email: serene.siow@psy.ox.ac.uk

        Principal Investigators: Núria Sebastian-Galles and Kim Plunkett

        Researchers: Gonzalo García-Castro and Serene Siow

        Center for Brain and Cognition, Universitat Pompeu Fabra

        Department of Experimental Psychology, University of Oxford
    TextComponent contactNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent contactNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine confidentiality
    TextComponent confidentialityTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = HOW WILL MY DATA BE USED?
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    TextComponent confidentialityText
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your answers will be completely ANONYMOUS, and we will take all reasonable measures to ensure that they remain confidential.

        Your DATA WILL BE STORED in a password-protected file and MAY BE USED in academic publications IN AN ANONYMISED FORM. Your IP address will NOT BE STORED. Research data will be stored for a minimum of three years after publication or public release.

        We would also like your permission to use your anonymised data in future studies, and to SHARE data with other researchers (e.g. in online databases). Any personal information that could identify you will be REMOVED or REPLACED before files are SHARED with other researchers or results are MADE PUBLIC.

        This project has received ethics clearance through the University of Oxford Central University Research Ethics Committee, R60939/RE005.
    TextComponent confidentialityNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent confidentialityNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine information
    TextComponent informationTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = NEED FOR INFORMATION?
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    TextComponent informationText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you have a concern about any aspect of this study, please speak to Serene Siow (serene.siow@psy.ox.ac.uk), and we will do our best to answer your query.

        If you remain unhappy or wish to make a formal complaint, please contact the Chair of the Research Ethics Committee at the University of Oxford.
        Chair, Medical Sciences Interdivisional Research Ethics Committee
        Email: ethics@medsci.ox.ac.uk
    TextComponent informationNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent infomationNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent
    TextComponent consentTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INFORMED CONSENT
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    TextComponent consentText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BY PRESSING SPACE, I certify that I am 18 years of age or over. I agree to participate in the study described. I have made this decision based on the information I have read in the consent information. I have had the opportunity to receive any additional details I wanted about the study and understand that I may ask questions in the future. I understand that I may withdraw this consent at any time.
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    TextComponent consentTextNext
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue >
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    KeyboardComponent consentNextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine languageL1
    TextComponent languageL1TitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL1Text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What is your NATIVE language?

        e) English
        s) Spanish
        c) Catalan
        o) Other
    TextComponent languageL1NextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent languageL1Key
      allowedKeys = 'e', 's', 'c', 'o' 
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL1Code
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
  Routine languageL2
    TextComponent languageL2TitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL2Text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Do you know any other SECOND LANGUAGE, different than the one you indicated before? If yes, type which one and press RETURN. If no, press RETURN without writing anything.
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    TextComponent languageL2NextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent languageL2InputText
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $'> ' + inputText
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    CodeComponent languageL2Code
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keyList = letterKeysAllowed)
        i = 0 # index whether how many keys have been previously pressed

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('languageL2', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            if (keys[i]=='return'):
                languageL2value = inputText
                if (inputText==''):
                    languageL3value=''
                thisExp.addData('languageL2', inputText) # save data
                continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            elif (keys[i]=='space'):
                inputText += ' ';
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                inputText="'"
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('languageL2', inputText) # save data
                i = i + 1 # index another key press
      End Routine:
        print(languageL2value)
  Routine languageL2Oral
    TextComponent languageL2OralTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL2OralText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in your SECOND LANGUAGE?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native /  I am native
    TextComponent languageL2OralNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL2OralKey
      allowedKeys = '1','2','3','4', '5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL2OralCode
      Code Type = Auto->JS
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      Begin Routine:
        if languageL2value=='':
            continueRoutine = False
  Routine languageL2Written
    TextComponent languageL2WrittenTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL2WrittenText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in your SECOND LANGUAGE?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageL2WrittenNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL2WrittenKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL2WrittenCode
      Code Type = Auto->JS
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      Begin Routine:
        if languageL2value=='':
            continueRoutine = False
  Routine languageL3
    TextComponent languageL3TitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL3Text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Do you know any other THIRD LANGUAGE, different than the ones you indicated before? If yes, type which one(s) and press RETURN. If no, press RETURN leaving it blank.
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    TextComponent languageL3NextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent languageL3InputText
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $'> ' + inputText
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    CodeComponent languageL3Code
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        if languageL2value=='':
            continueRoutine = False

        keys = event.getKeys(keyList = letterKeysAllowed)
        i = 0 # index whether how many keys have been previously pressed

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('languageL3', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                languageL3value = inputText
                thisExp.addData('languageL3', inputText) # save data
                continueRoutine = False
            # ... and SPACE is pressed, add space
            elif (keys[i]=='space'):
                inputText += ' '
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                inputText = "'"
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('languageL3', inputText) # save data
                i = i + 1 # index another key press
      End Routine:
        print(languageL3value)
  Routine languageL3Oral
    TextComponent languageL3OralTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL3OralText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in your THIRD LANGUAGE?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native / I am native
    TextComponent languageL3OralNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL3OralKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL3OralCode
      Code Type = Auto->JS
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      Begin Routine:
        if languageL3value=='':
            continueRoutine = False
  Routine languageL3Written
    TextComponent languageL3WrittenTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageL3WrittenText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in your THIRD LANGUAGE?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageL3WrittenNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageL3WrittenKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageL3WrittenCode
      Code Type = Auto->JS
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      Begin Routine:
        if languageL3value=='':
            continueRoutine = False
  Routine languageCatalanOral
    TextComponent languageCatalanOralTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageCatalanOralText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in CATALAN?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native /  I am native
    TextComponent languageCatalanOralNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageCatalanOralKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanOralCode
      Code Type = Auto->JS
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      Begin Routine:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="CATALAN" or languageL3value=="CATALAN"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageCatalanWritten
    TextComponent languageCatalanWrittenTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageCatalanWrittenText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in CATALAN?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageCatalanWrittenNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageCatalanWrittenKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanWrittenCode
      Code Type = Auto->JS
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      Begin Routine:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="CATALAN" or languageL3value=="CATALAN"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageCatalanTime
    TextComponent languageCatalanTimeTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageCatalanTimeText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How long have you spent in any REGION where CATALAN is spoken (Catalonia, Valencia, Balearic Islands), including your childhood? Pick the option that best describes your situation:

        1) Never or less than 1 month
        2) Between 1 and 3 months
        3) I used to spend holidays there
        4) I lived there for less than 6 months
        5) I lived there for 6 months or longer
    TextComponent languageCatalanTimeNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageCatalanTimeKey
      allowedKeys = '1','2','3','4', '5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageCatalanTimeCode
      Code Type = Auto->JS
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      Begin Routine:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageSpanishOral
    TextComponent languageSpanishOralTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageSpanishOralText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your ORAL COMPREHENSION proficiency in SPANISH?

        1) I do not understand anything
        2) I understand some words
        3) I can get what a conversation or sentence is about
        4) I understand almost everything
        5) Like a native /  I am native
    TextComponent languageSpanishOralNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageSpanishOralKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageSpanishOralCode
      Code Type = Auto->JS
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      Begin Routine:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="SPANISH" or languageL3value=="SPANISH"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageSpanishWritten
    TextComponent languageSpanishTitleText
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageSpanishWrittenText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        On a scale of 1-5, how would you rate your WRITTEN proficiency in SPANISH?

        1) I have never received any training in the orthography of this language
        2) I make a lot of orthographic mistakes
        3) I make many orthographic mistakes
        4) I make some orthographic mistakes
        5) I do not make any orthographic mistakes
    TextComponent languageSpanishNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageSpanishWrittenKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent languageSpanishWrittenCode
      Code Type = Auto->JS
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      Begin Routine:
        # if Catalan is L2 or L3, skip
        if (languageL2value=="SPANISH" or languageL3value=="SPANISH"):
            continueRoutine = False

        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
  Routine languageSpanishTime
    TextComponent languageSpanishTimeTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = LANGUAGE QUESTIONNAIRE
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    TextComponent languageSpanishTimeText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How long have you spent in any REGION where SPANISH is spoken (Spain, South America), including your childhood? Pick the option that best describes your situation:

        1) Never or less than 1 month
        2) Between 1 and 3 months
        3) I used to spend holidays there
        4) I lived there for less than 6 months
        5) I lived there for 6 months or longer
    TextComponent languageSpanishTimeNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent languageSpanishTimeKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demoAge
    TextComponent demoAgeTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoAgeText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please, type your age (in years) and then press RETURN:
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    TextComponent demoAgeNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent demoAgeInputText
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $'> ' + inputText
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    CodeComponent demoAgeCode
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keyList = ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'escape', 'backspace', 'return'])
        i = 0 # index whether how many keys have been previously pressed

        # Keys are mapped onto a Spanish keyboard

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                age = inputText
                thisExp.addData('age', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            elif (keys[i]=='return'):
                if (inputText != ''):
                    language2 = inputText
                    thisExp.addData('age', inputText) # save data
                    continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('age', inputText) # save data
                i = i + 1 # index another key press
  Routine demoSex
    TextComponent demoSexTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoSexText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sex:

        f) Female
        m) Male
        o) Other
    TextComponent demoSexNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent demoSexKey
      allowedKeys = 'f','m','o'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demoEducation
    TextComponent demoEducationTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoEducationText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What is your highest level of EDUCATIONAL ACHIEVEMENT?

        1) No qualifications
        2) Left school at 16 with GCSE or equivalent
        3) Left school at 18 with A-Levels or equivalent
        4) University degree or equivalent
        5) Vocational training
    TextComponent demoEducationNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent demoEducationKey
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demoCity
    TextComponent demoCityTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoCityText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What CITY do you live in? Type it and press RETURN to continue.
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    TextComponent demoCityNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press RETURN to continue >
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    TextComponent demoCityInputText
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $'> ' + inputText
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    CodeComponent demoCityCode
      Code Type = Auto->JS
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      Begin Routine:
        psychopy.event.clearEvents()
        inputText = ''
        isAccented = False
      Each Frame:
        keys = event.getKeys(keyList = letterKeysAllowed)
        i = 0 # index whether how many keys have been previously pressed

        if len(keys): # if any key has been pressed...

             # ... and ESCAPE is pressed, quit experiment
            if keys[i]=='escape':
                thisExp.addData('city', inputText) # save data
                core.quit()
                # ... and RETURN is pressed, stop trial
            if (keys[i]=='return'):
                city = inputText
                thisExp.addData('city', inputText) # save data
                continueRoutine = False
            # ... and BACKSPACE is pressed, delete last character
            elif (keys[i]=='backspace'):
                inputText = inputText[:-1]
            elif (keys[i]=='space'):
                inputText += ' ';
            # and 'apostrophe' is pressed, flag accent
            elif (keys[i]=='apostrophe'):
                inputText="'"
            else:
                # write key as it is (in capital letters)
                inputText += keys[i].upper()
                thisExp.addData('city', inputText) # save data
                i = i + 1 # index another key press
  Routine demoLanguage
    TextComponent demoLanguageTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoLanguageText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Have you been diagnosed with any LANGUAGE (e.g., DYSLEXIA) OR HEARING IMPAIRMENT?

        y) Yes
        n) No
    TextComponent demoLanguageNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent demoLanguageKey
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demoVision
    TextComponent demoVisionTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = DEMOGRAPHIC INFORMATION
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    TextComponent demoVisionText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you have normal or corrected-to-normal VISION?

        y) Yes
        n) No
    TextComponent demoTextNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding letter >
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    KeyboardComponent demoVisionKey
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setupLocation
    TextComponent setupLocationTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SETUP
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    TextComponent setupLocationText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        WHERE are you completing this study?

        1) At home
        2) At the library
        3) At a cafe or restaurant
        4) At a friend’s house
        5) At school
        6) At work
        7) Other
    TextComponent setupLocationNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent setupLocationKey
      allowedKeys = '1','2','3','4','5', '6', '7'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine setupNoise
    TextComponent setupNoiseTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = SETUP
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    TextComponent setupNoiseText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How NOISY was the environment in which you completed the experiment?

        1) Very quiet (like a library)
        2) Somewhat quiet (like an office)
        3) Somewhat noisy (like being at the park)
        4) Very noisy (like being at a busy street)
    TextComponent setupNoiseNextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the corresponding number >
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    KeyboardComponent setupNoiseKey
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructionsTitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS
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    TextComponent instructionsText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will listen to some words through your headphones.

        Words are in Catalan or Spanish and were recorded in a baby-directed manner. You will have to GUESS and TYPE the TRANSLATION of each word IN ENGLISH.

        Start typing as soon as you come up with an answer. It is probable that you do not know it. Type the translation you think is most likely to be correct. You MUST type an answer FOR EACH WORD.

        You can use BACKSPACE to correct any typing errors, as you would normally.

        After typing the word, press RETURN to continue to the next word.
    TextComponent instructionsNextText
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        NEXT, YOU WILL COMPLETE 5 PRACTICE TRIALS

        Press SPACE to continue
    KeyboardComponent instructionsKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions2
    TextComponent instructions2TitleText
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS
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    TextComponent instructions2Text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You may adjust the volume during these trials to avoid having to do it during the main experiment. Make sure words are loud enough for you to hear them clearly.
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    TextComponent isntructions2NextText
      color = yellow
      letterHeight = 0.03
      pos = (0.4, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start 5 practice trials >
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    KeyboardComponent isntructions2Key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent instructions2Code
      Code Type = Both
      Begin Experiment:
        import random
      End JS Routine:
        // randomise testing language (between-participant)
        versions = ['catalan', 'spanish'];
        versionRandom = versions[Math.floor(Math.random() *  versions.length)]; // ... randomly assign to Catalan or Spanish
        if (versionRandom==="catalan") {
            trialsPracticeCatalanReps = 1;
            trialsPracticeSpanishReps = 0;
            trialsCatalanReps = 1;
            trialsSpanishReps = 0;
            } else if (versionRandom==="spanish") {
                trialsPracticeCatalanReps = 0;
                trialsPracticeSpanishReps = 1;
                trialsCatalanReps = 0;
                trialsSpanishReps = 1;
                }
      End Routine:
        # randomise testing language (between-participant)
        versions = ['catalan', 'spanish']
        versionRandom = random.sample(['catalan', 'spanish'], 1)
        print(versionRandom)
        if (versionRandom=="catalan"):
            trialsPracticeCatalanReps = 1
            trialsPracticeSpanishReps = 0
            trialsCatalanReps = 1
            trialsSpanishReps = 0
        else:
            trialsPracticeCatalanReps = 0
            trialsPracticeSpanishReps = 1
            trialsCatalanReps = 0
            trialsSpanishReps = 1
  Routine fixation
    TextComponent fixationText
      color = yellow
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial
    TextComponent trialText
      letterHeight = 0.1
      saveStartStop = False
      startVal [condition] = trialSound.status==FINISHED
      text [set every frame] = $'> ' + inputText
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    SoundComponent trialSound
      sound [set every repeat] = $soundfile
      startVal [time (s)] = 0.0
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        keysAllowed = ['q', 'w', 'e', 'r', 't', 'y', 'u', 'i', 'o', 'p', 'a', 's', 'd', 'f', 'g', 'h', 'j', 'k', 'l', 'apostrophe', 'z', 'x', 'c', 'v', 'b', 'n', 'm', 'escape', 'space', 'return', 'backspace']
        inputText = ''
        debugText = ''
        isAccented = False
        error = False
        keyPressTime = 0
        wordT = word
      Each Frame:
        keys = event.getKeys(keyList = keysAllowed)

        i = 0

        if trialSound.status==FINISHED: # if audio has finished...

            if len(keys): # if a key has been pressed...

                if 'return' in keys[i]: # and it's 'return'
                    thisExp.addData('trialOffset', t) # save time
                    thisExp.addData('keyPressTime', t) # save time
                    continueRoutine = False

                elif 'escape' in keys[i]: # and it's 'escape'...
                    thisExp.addData('trialOffset', t) # save time
                    core.quit()  # exit

                elif keys[i]=='space': # and it's 'space'...
                    inputText = inputText + ' ' # add a space

                elif keys[i] == 'backspace': # and it's 'backspace'
                    inputText = inputText[:-1]
                    keyPressTime = t # get time
                    error = True
                    inputText = inputText[:-1] # remove last character

                elif 'apostrophe' in keys[i]: # and it's apostrophe
                    inputText += "'" # add apostrophe

                else:
                    inputText += keys[i].upper()

            # save data
                thisExp.addData('keyPressed', keys[i]) # save pressed key
                thisExp.addData('keyPressTime', t) # save time
                thisExp.addData('inputText', inputText) # save text
                thisExp.addData('error', error) # save time
                thisExp.addData('wordT', wordT) # save time
                thisExp.nextEntry()
                i = i+1
  Routine farewell
    TextComponent farewellText
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congratulations! You have finished.

        THANKS A LOT FOR YOUR PARTICIPATION.

        If you have any questions, get in touch with us at serene.siow@ox.ac.uk

        Press SPACE to be redirected to Prolific.

        Please, wait to be redirected to Prolific, otherwise you may not receive your credit.
    CodeComponent farewellCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
  Routine begin
    TextComponent beginText
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed the PRACTICE trials
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    TextComponent beginNextText
      color = yellow
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start >
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    CodeComponent beginCode
      Code Type = Auto->JS
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      Each Frame:
        # if ESCAPE is pressed, quit experiment
        keys = event.getKeys(keyList = ['escape', 'space'])
        n = len(keys)

        if ('escape' in keys):
            core.quit()
        elif ('space' in keys):
            continueRoutine = False
Flow
  Routine setup
  Routine welcome
  Routine description
  Routine voluntary
  Routine contact
  Routine confidentiality
  Routine information
  Routine consent
  Routine languageL1
  Routine languageL2
  Routine languageL2Oral
  Routine languageL2Written
  Routine languageL3
  Routine languageL3Oral
  Routine languageL3Written
  Routine languageCatalanOral
  Routine languageCatalanWritten
  Routine languageCatalanTime
  Routine languageSpanishOral
  Routine languageSpanishWritten
  Routine languageSpanishTime
  Routine demoAge
  Routine demoSex
  Routine demoEducation
  Routine demoCity
  Routine demoVision
  Routine demoLanguage
  Routine setupLocation
  Routine setupNoise
  Routine instructions
  Routine instructions2
  LoopInitiator trialsPracticeCatalan loopType="TrialHandler"
    conditionsFile = Trials/01_trials_practice_catalan.xlsx
    loopType = random
    nReps = trialsPracticeCatalanReps
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    conditions:
      [{'trial_id': 109, 'word': 'arbre', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_arbre.wav'},
      {'trial_id': 126, 'word': 'corona', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_corona.wav'},
      {'trial_id': 147, 'word': 'jaqueta', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_jaqueta.wav'},
      {'trial_id': 159, 'word': 'onada', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_onada.wav'},
      {'trial_id': 179, 'word': 'tigre', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_tigre.wav'}]
    Routine fixation
    Routine trial
  LoopTerminator trialsPracticeCatalan
  LoopInitiator trialsPracticeSpanish loopType="TrialHandler"
    conditionsFile = Trials/01_trials_practice_spanish.xlsx
    loopType = random
    nReps = trialsPracticeSpanishReps
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    conditions:
      [{'trial_id': 1, 'word': 'arbol', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_arbol.wav'},
      {'trial_id': 30, 'word': 'corona', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_corona.wav'},
      {'trial_id': 26, 'word': 'chaqueta', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_chaqueta.wav'},
      {'trial_id': 70, 'word': 'ola', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_ola.wav'},
      {'trial_id': 96, 'word': 'tigre', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_tigre.wav'},
      {'trial_id': None, 'word': None, 'test_language': None, 'soundfile': None},
      {'trial_id': None, 'word': None, 'test_language': None, 'soundfile': None},
      {'trial_id': None, 'word': None, 'test_language': None, 'soundfile': None},
      {'trial_id': None, 'word': None, 'test_language': None, 'soundfile': None},
      {'trial_id': None, 'word': None, 'test_language': None, 'soundfile': None}]
    Routine fixation
    Routine trial
  LoopTerminator trialsPracticeSpanish
  Routine begin
  LoopInitiator trialsCatalan loopType="TrialHandler"
    conditionsFile = Trials/02_trials_catalan.xlsx
    loopType = random
    nReps = trialsCatalanReps
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    conditions:
      [{'trial_id': 104, 'word': 'abella', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_abella.wav'},
      {'trial_id': 105, 'word': 'aigua', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_aigua.wav'},
      {'trial_id': 106, 'word': 'aixeta', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_aixeta.wav'},
      {'trial_id': 107, 'word': 'amanida', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_amanida.wav'},
      {'trial_id': 108, 'word': 'ampolla', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_ampolla.wav'},
      {'trial_id': 110, 'word': 'berenar', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_berenar.wav'},
      {'trial_id': 111, 'word': 'bibero', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_bibero.wav'},
      {'trial_id': 112, 'word': 'bici', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_bici.wav'},
      {'trial_id': 113, 'word': 'boca', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_boca.wav'},
      {'trial_id': 114, 'word': 'bol', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_bol.wav'},
      {'trial_id': 115, 'word': 'bolet', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_bolet.wav'},
      {'trial_id': 116, 'word': 'bolquer', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_bolquer.wav'},
      {'trial_id': 117, 'word': 'boto', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_boto.wav'},
      {'trial_id': 118, 'word': 'bou', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_bou.wav'},
      {'trial_id': 119, 'word': 'caixa', 'test_language': 'Catalan', 'soundfile': 'Sounds/cat_caixa.wav'}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
    Routine fixation
    Routine trial
  LoopTerminator trialsCatalan
  LoopInitiator trialsSpanish loopType="TrialHandler"
    conditionsFile = Trials/02_trials_spanish.xlsx
    loopType = random
    nReps = trialsSpanishReps
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    conditions:
      [{'trial_id': 2, 'word': 'avestruz', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_avestruz.mp3'},
      {'trial_id': 3, 'word': 'barco', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_barco.mp3'},
      {'trial_id': 4, 'word': 'biberon', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_biberon.mp3'},
      {'trial_id': 5, 'word': 'bici', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_bici.mp3'},
      {'trial_id': 6, 'word': 'boca', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_boca.mp3'},
      {'trial_id': 7, 'word': 'bocadillo', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_bocadillo.mp3'},
      {'trial_id': 8, 'word': 'bol', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_bol.mp3'},
      {'trial_id': 9, 'word': 'boli', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_boli.mp3'},
      {'trial_id': 10, 'word': 'botella', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_botella.mp3'},
      {'trial_id': 11, 'word': 'boton', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_boton.mp3'},
      {'trial_id': 12, 'word': 'brazo', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_brazo.mp3'},
      {'trial_id': 13, 'word': 'buho', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_buho.mp3'},
      {'trial_id': 14, 'word': 'burro', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_burro.mp3'},
      {'trial_id': 15, 'word': 'caballo', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_caballo.mp3'},
      {'trial_id': 16, 'word': 'caja', 'test_language': 'Spanish', 'soundfile': 'Sounds/spa_caja.mp3'}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
    Routine fixation
    Routine trial
  LoopTerminator trialsSpanish
  Routine farewell
